WorkflowBuilder(Version=2.8.0)
GroupWorkflow Photometry
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23235878, ColorProcessing=Default) => #0
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #4
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #6
    #4 -> Bonsai.Vision.RoiActivity => #7
      Regions
        ArrayOfPoint
          Point(X=79, Y=79)
          Point(X=79, Y=80)
          Point(X=79, Y=82)
          Point(X=78, Y=83)
          Point(X=77, Y=85)
          Point(X=76, Y=86)
          Point(X=75, Y=87)
          Point(X=74, Y=87)
          Point(X=73, Y=88)
          Point(X=72, Y=88)
          Point(X=70, Y=88)
          Point(X=69, Y=87)
          Point(X=68, Y=87)
          Point(X=67, Y=86)
          Point(X=66, Y=85)
          Point(X=65, Y=83)
          Point(X=64, Y=82)
          Point(X=64, Y=80)
          Point(X=64, Y=79)
          Point(X=64, Y=77)
          Point(X=64, Y=75)
          Point(X=65, Y=74)
          Point(X=66, Y=72)
          Point(X=67, Y=71)
          Point(X=68, Y=70)
          Point(X=69, Y=70)
          Point(X=70, Y=69)
          Point(X=72, Y=69)
          Point(X=73, Y=69)
          Point(X=74, Y=70)
          Point(X=75, Y=70)
          Point(X=76, Y=71)
          Point(X=77, Y=72)
          Point(X=78, Y=74)
          Point(X=79, Y=75)
          Point(X=79, Y=77)
        ArrayOfPoint
          Point(X=48, Y=67)
          Point(X=48, Y=69)
          Point(X=48, Y=70)
          Point(X=47, Y=72)
          Point(X=46, Y=73)
          Point(X=45, Y=75)
          Point(X=44, Y=76)
          Point(X=43, Y=76)
          Point(X=42, Y=77)
          Point(X=41, Y=77)
          Point(X=39, Y=77)
          Point(X=38, Y=76)
          Point(X=37, Y=76)
          Point(X=36, Y=75)
          Point(X=35, Y=73)
          Point(X=34, Y=72)
          Point(X=33, Y=70)
          Point(X=33, Y=69)
          Point(X=33, Y=67)
          Point(X=33, Y=65)
          Point(X=33, Y=64)
          Point(X=34, Y=62)
          Point(X=35, Y=61)
          Point(X=36, Y=59)
          Point(X=37, Y=58)
          Point(X=38, Y=58)
          Point(X=39, Y=57)
          Point(X=41, Y=57)
          Point(X=42, Y=57)
          Point(X=43, Y=58)
          Point(X=44, Y=58)
          Point(X=45, Y=59)
          Point(X=46, Y=61)
          Point(X=47, Y=62)
          Point(X=48, Y=64)
          Point(X=48, Y=65)
        ArrayOfPoint
          Point(X=55, Y=36)
          Point(X=55, Y=38)
          Point(X=54, Y=40)
          Point(X=54, Y=41)
          Point(X=53, Y=43)
          Point(X=52, Y=44)
          Point(X=51, Y=45)
          Point(X=49, Y=45)
          Point(X=48, Y=46)
          Point(X=46, Y=46)
          Point(X=45, Y=46)
          Point(X=44, Y=45)
          Point(X=42, Y=45)
          Point(X=41, Y=44)
          Point(X=40, Y=43)
          Point(X=39, Y=41)
          Point(X=39, Y=40)
          Point(X=38, Y=38)
          Point(X=38, Y=36)
          Point(X=38, Y=35)
          Point(X=39, Y=33)
          Point(X=39, Y=32)
          Point(X=40, Y=30)
          Point(X=41, Y=29)
          Point(X=42, Y=28)
          Point(X=44, Y=28)
          Point(X=45, Y=27)
          Point(X=46, Y=27)
          Point(X=48, Y=27)
          Point(X=49, Y=28)
          Point(X=51, Y=28)
          Point(X=52, Y=29)
          Point(X=53, Y=30)
          Point(X=54, Y=32)
          Point(X=54, Y=33)
          Point(X=55, Y=35)
        ArrayOfPoint
          Point(X=94, Y=50)
          Point(X=94, Y=52)
          Point(X=93, Y=53)
          Point(X=93, Y=55)
          Point(X=92, Y=56)
          Point(X=91, Y=58)
          Point(X=89, Y=59)
          Point(X=88, Y=59)
          Point(X=86, Y=60)
          Point(X=85, Y=60)
          Point(X=83, Y=60)
          Point(X=81, Y=59)
          Point(X=80, Y=59)
          Point(X=78, Y=58)
          Point(X=77, Y=56)
          Point(X=76, Y=55)
          Point(X=76, Y=53)
          Point(X=75, Y=52)
          Point(X=75, Y=50)
          Point(X=75, Y=48)
          Point(X=76, Y=47)
          Point(X=76, Y=45)
          Point(X=77, Y=44)
          Point(X=78, Y=42)
          Point(X=80, Y=41)
          Point(X=81, Y=41)
          Point(X=83, Y=40)
          Point(X=85, Y=40)
          Point(X=86, Y=40)
          Point(X=88, Y=41)
          Point(X=89, Y=41)
          Point(X=91, Y=42)
          Point(X=92, Y=44)
          Point(X=93, Y=45)
          Point(X=93, Y=47)
          Point(X=94, Y=48)
        ArrayOfPoint(Point(X=0, Y=1), Point(X=18, Y=1), Point(X=18, Y=37), Point(X=0, Y=37))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0) => #9
    #7 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0) => #11
    #7 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #13
    #7 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #15
    #7 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #17
    #6, #9, #11, #13, #15, #17 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Signal_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #4 -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Signal_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #24
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #26
    #24 -> Bonsai.Vision.RoiActivity => #27
      Regions
        ArrayOfPoint
          Point(X=79, Y=80)
          Point(X=79, Y=82)
          Point(X=79, Y=84)
          Point(X=78, Y=85)
          Point(X=77, Y=87)
          Point(X=76, Y=88)
          Point(X=75, Y=89)
          Point(X=74, Y=89)
          Point(X=72, Y=90)
          Point(X=71, Y=90)
          Point(X=70, Y=90)
          Point(X=68, Y=89)
          Point(X=67, Y=89)
          Point(X=66, Y=88)
          Point(X=65, Y=87)
          Point(X=64, Y=85)
          Point(X=63, Y=84)
          Point(X=63, Y=82)
          Point(X=63, Y=80)
          Point(X=63, Y=79)
          Point(X=63, Y=77)
          Point(X=64, Y=76)
          Point(X=65, Y=74)
          Point(X=66, Y=73)
          Point(X=67, Y=72)
          Point(X=68, Y=72)
          Point(X=70, Y=71)
          Point(X=71, Y=71)
          Point(X=72, Y=71)
          Point(X=74, Y=72)
          Point(X=75, Y=72)
          Point(X=76, Y=73)
          Point(X=77, Y=74)
          Point(X=78, Y=76)
          Point(X=79, Y=77)
          Point(X=79, Y=79)
        ArrayOfPoint
          Point(X=48, Y=67)
          Point(X=48, Y=69)
          Point(X=48, Y=70)
          Point(X=47, Y=71)
          Point(X=46, Y=73)
          Point(X=45, Y=74)
          Point(X=44, Y=75)
          Point(X=43, Y=75)
          Point(X=42, Y=76)
          Point(X=40, Y=76)
          Point(X=39, Y=76)
          Point(X=38, Y=75)
          Point(X=37, Y=75)
          Point(X=36, Y=74)
          Point(X=35, Y=73)
          Point(X=34, Y=71)
          Point(X=33, Y=70)
          Point(X=33, Y=69)
          Point(X=33, Y=67)
          Point(X=33, Y=65)
          Point(X=33, Y=64)
          Point(X=34, Y=63)
          Point(X=35, Y=61)
          Point(X=36, Y=60)
          Point(X=37, Y=59)
          Point(X=38, Y=59)
          Point(X=39, Y=58)
          Point(X=40, Y=58)
          Point(X=42, Y=58)
          Point(X=43, Y=59)
          Point(X=44, Y=59)
          Point(X=45, Y=60)
          Point(X=46, Y=61)
          Point(X=47, Y=63)
          Point(X=48, Y=64)
          Point(X=48, Y=65)
        ArrayOfPoint
          Point(X=54, Y=36)
          Point(X=54, Y=37)
          Point(X=53, Y=39)
          Point(X=53, Y=41)
          Point(X=52, Y=43)
          Point(X=51, Y=44)
          Point(X=50, Y=45)
          Point(X=48, Y=46)
          Point(X=47, Y=47)
          Point(X=45, Y=47)
          Point(X=44, Y=47)
          Point(X=43, Y=46)
          Point(X=41, Y=45)
          Point(X=40, Y=44)
          Point(X=39, Y=43)
          Point(X=38, Y=41)
          Point(X=38, Y=39)
          Point(X=37, Y=37)
          Point(X=37, Y=36)
          Point(X=37, Y=34)
          Point(X=38, Y=32)
          Point(X=38, Y=30)
          Point(X=39, Y=28)
          Point(X=40, Y=27)
          Point(X=41, Y=26)
          Point(X=43, Y=25)
          Point(X=44, Y=24)
          Point(X=45, Y=24)
          Point(X=47, Y=24)
          Point(X=48, Y=25)
          Point(X=50, Y=26)
          Point(X=51, Y=27)
          Point(X=52, Y=28)
          Point(X=53, Y=30)
          Point(X=53, Y=32)
          Point(X=54, Y=34)
        ArrayOfPoint
          Point(X=92, Y=49)
          Point(X=92, Y=51)
          Point(X=91, Y=52)
          Point(X=91, Y=54)
          Point(X=90, Y=55)
          Point(X=89, Y=57)
          Point(X=88, Y=58)
          Point(X=86, Y=58)
          Point(X=85, Y=59)
          Point(X=83, Y=59)
          Point(X=82, Y=59)
          Point(X=81, Y=58)
          Point(X=79, Y=58)
          Point(X=78, Y=57)
          Point(X=77, Y=55)
          Point(X=76, Y=54)
          Point(X=76, Y=52)
          Point(X=75, Y=51)
          Point(X=75, Y=49)
          Point(X=75, Y=47)
          Point(X=76, Y=46)
          Point(X=76, Y=44)
          Point(X=77, Y=43)
          Point(X=78, Y=41)
          Point(X=79, Y=40)
          Point(X=81, Y=40)
          Point(X=82, Y=39)
          Point(X=83, Y=39)
          Point(X=85, Y=39)
          Point(X=86, Y=40)
          Point(X=88, Y=40)
          Point(X=89, Y=41)
          Point(X=90, Y=43)
          Point(X=91, Y=44)
          Point(X=91, Y=46)
          Point(X=92, Y=47)
        ArrayOfPoint(Point(X=0, Y=2), Point(X=16, Y=2), Point(X=16, Y=46), Point(X=0, Y=46))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0) => #29
    #27 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0) => #31
    #27 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #33
    #27 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #35
    #27 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #37
    #26, #29, #31, #33, #35, #37 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Iso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #24 -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Iso_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> Skip(Count=2)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #44
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #46
    #44 -> Bonsai.Vision.RoiActivity => #47
      Regions
        ArrayOfPoint
          Point(X=78, Y=81)
          Point(X=78, Y=83)
          Point(X=78, Y=84)
          Point(X=77, Y=85)
          Point(X=76, Y=87)
          Point(X=75, Y=88)
          Point(X=74, Y=89)
          Point(X=73, Y=89)
          Point(X=72, Y=90)
          Point(X=71, Y=90)
          Point(X=70, Y=90)
          Point(X=69, Y=89)
          Point(X=68, Y=89)
          Point(X=67, Y=88)
          Point(X=66, Y=87)
          Point(X=65, Y=85)
          Point(X=64, Y=84)
          Point(X=64, Y=83)
          Point(X=64, Y=81)
          Point(X=64, Y=79)
          Point(X=64, Y=78)
          Point(X=65, Y=77)
          Point(X=66, Y=75)
          Point(X=67, Y=74)
          Point(X=68, Y=73)
          Point(X=69, Y=73)
          Point(X=70, Y=72)
          Point(X=71, Y=72)
          Point(X=72, Y=72)
          Point(X=73, Y=73)
          Point(X=74, Y=73)
          Point(X=75, Y=74)
          Point(X=76, Y=75)
          Point(X=77, Y=77)
          Point(X=78, Y=78)
          Point(X=78, Y=79)
        ArrayOfPoint
          Point(X=48, Y=68)
          Point(X=48, Y=69)
          Point(X=48, Y=71)
          Point(X=47, Y=72)
          Point(X=46, Y=74)
          Point(X=45, Y=75)
          Point(X=44, Y=76)
          Point(X=43, Y=76)
          Point(X=42, Y=77)
          Point(X=41, Y=77)
          Point(X=39, Y=77)
          Point(X=38, Y=76)
          Point(X=37, Y=76)
          Point(X=36, Y=75)
          Point(X=35, Y=74)
          Point(X=34, Y=72)
          Point(X=33, Y=71)
          Point(X=33, Y=69)
          Point(X=33, Y=68)
          Point(X=33, Y=66)
          Point(X=33, Y=64)
          Point(X=34, Y=63)
          Point(X=35, Y=61)
          Point(X=36, Y=60)
          Point(X=37, Y=59)
          Point(X=38, Y=59)
          Point(X=39, Y=58)
          Point(X=41, Y=58)
          Point(X=42, Y=58)
          Point(X=43, Y=59)
          Point(X=44, Y=59)
          Point(X=45, Y=60)
          Point(X=46, Y=61)
          Point(X=47, Y=63)
          Point(X=48, Y=64)
          Point(X=48, Y=66)
        ArrayOfPoint
          Point(X=54, Y=35)
          Point(X=54, Y=37)
          Point(X=53, Y=39)
          Point(X=53, Y=41)
          Point(X=52, Y=42)
          Point(X=51, Y=44)
          Point(X=50, Y=45)
          Point(X=48, Y=45)
          Point(X=47, Y=46)
          Point(X=46, Y=46)
          Point(X=44, Y=46)
          Point(X=43, Y=45)
          Point(X=41, Y=45)
          Point(X=40, Y=44)
          Point(X=39, Y=42)
          Point(X=38, Y=41)
          Point(X=38, Y=39)
          Point(X=37, Y=37)
          Point(X=37, Y=35)
          Point(X=37, Y=34)
          Point(X=38, Y=32)
          Point(X=38, Y=30)
          Point(X=39, Y=29)
          Point(X=40, Y=27)
          Point(X=41, Y=26)
          Point(X=43, Y=26)
          Point(X=44, Y=25)
          Point(X=46, Y=25)
          Point(X=47, Y=25)
          Point(X=48, Y=26)
          Point(X=50, Y=26)
          Point(X=51, Y=27)
          Point(X=52, Y=29)
          Point(X=53, Y=30)
          Point(X=53, Y=32)
          Point(X=54, Y=34)
        ArrayOfPoint
          Point(X=92, Y=49)
          Point(X=92, Y=51)
          Point(X=92, Y=53)
          Point(X=91, Y=55)
          Point(X=90, Y=56)
          Point(X=89, Y=58)
          Point(X=88, Y=59)
          Point(X=87, Y=59)
          Point(X=85, Y=60)
          Point(X=84, Y=60)
          Point(X=83, Y=60)
          Point(X=81, Y=59)
          Point(X=80, Y=59)
          Point(X=79, Y=58)
          Point(X=78, Y=56)
          Point(X=77, Y=55)
          Point(X=76, Y=53)
          Point(X=76, Y=51)
          Point(X=76, Y=49)
          Point(X=76, Y=48)
          Point(X=76, Y=46)
          Point(X=77, Y=44)
          Point(X=78, Y=43)
          Point(X=79, Y=41)
          Point(X=80, Y=40)
          Point(X=81, Y=40)
          Point(X=83, Y=39)
          Point(X=84, Y=39)
          Point(X=85, Y=39)
          Point(X=87, Y=40)
          Point(X=88, Y=40)
          Point(X=89, Y=41)
          Point(X=90, Y=43)
          Point(X=91, Y=44)
          Point(X=92, Y=46)
          Point(X=92, Y=48)
        ArrayOfPoint(Point(X=0, Y=2), Point(X=15, Y=2), Point(X=15, Y=47), Point(X=0, Y=47))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0) => #49
    #47 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0) => #51
    #47 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #53
    #47 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #55
    #47 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #57
    #46, #49, #51, #53, #55, #57 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Stim_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #44 -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Stim_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow "Cameras + Pupil Tracking"
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022720, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=286, Y=137, Width=79, Height=84))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=25, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis => #6
    -> Bonsai.Vision.LargestBinaryRegion
    #6 -> Bonsai.Vision.MinimumEnclosingCircle
    -> OrderByDescending(KeySelector=Radius)
    -> SelectMany
        WorkflowInput Source1
        -> Merge
        -> FirstOrDefault
        -> WorkflowOutput
    -> MemberSelector(Selector=Radius)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\PupilTracking_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #1 -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23045802, ColorProcessing=Default)
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\BodyCamera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\BodyCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="")
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
