WorkflowBuilder(Version=2.8.1)
StringProperty(Value=746346) => #0
StringProperty(Value=2025_04_11) => #1
#0, #1 -> Zip
-> Format(Format=C:\behavior_data\428-9-A\{0}\{1}\, Selector="Item1,Item2")
-> BehaviorSubject RootPath

GroupWorkflow ParamRead
    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\Pavloian_Params.csv, ScanPattern="%s,%s", SkipRows=0) => #0
    -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
    -> Take(Count=1)
    -> AsyncSubject PavParams
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/PavParams_.csv, Selector="")
    -> PropertyMapping(FileName) => #6
    #0, #6 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/PavParams_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow RandGen
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject Rng
    -> DelaySubscription(DueTime=PT1S)

    SubscribeSubject Rng => #4
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=CreateExponential_Rate))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble(it)
    -> PropertyMapping(Rate) => #8
    #4, #8 -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.2)
    -> AsyncSubject ExpDist

    SubscribeSubject Rng => #11
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=CreateDiscreteUniform_Lower))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(Lower) => #15
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=CreateDiscreteUniform_Upper))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(Upper) => #19
    #11, #15, #19 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=30)
    -> AsyncSubject Dist

GroupWorkflow CSUS_Action
    SubscribeSubject GiveReward
    -> MulticastSubject GiveRewardCopy
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject GiveReward_Manual
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #2, #4 -> Merge => #5
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=RewardSize))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(Value) => #9
    #5, #9 -> IntProperty(Value=24)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #16
    SubscribeSubject HarpTimeSource => #17
    #16, #17 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_Reward_.csv, Selector="")
    -> PropertyMapping(FileName) => #22
    #19, #22 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_Reward_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject GiveBigReward
    -> Condition => #25
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=RewardSizeBig))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(Value) => #29
    #25, #29 -> IntProperty(Value=40)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #36
    SubscribeSubject HarpTimeSource => #37
    #36, #37 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #39
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_RewardB_.csv, Selector="")
    -> PropertyMapping(FileName) => #42
    #39, #42 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_RewardB_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_CS1_.csv, Selector="")
    -> PropertyMapping(FileName) => #46
    SubscribeSubject PlayCS1
    -> Condition => #48
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=AttenuationPayload_CS1))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(AttenuationLeft) => #52
    #48, #52 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=200))
    -> MulticastSubject SoundCommands => #54
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=PlaySound_CS1))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(PlaySoundOrFrequency) => #58
    #54, #58 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=11))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #62
    SubscribeSubject HarpTimeSource => #63
    #62, #63 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #65
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    #46, #65 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_CS1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_CS2_.csv, Selector="")
    -> PropertyMapping(FileName) => #69
    SubscribeSubject PlayCS2
    -> Condition => #71
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=AttenuationPayload_CS2))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(AttenuationLeft) => #75
    #71, #75 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=200))
    -> MulticastSubject SoundCommands => #77
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=PlaySound_CS2))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(PlaySoundOrFrequency) => #81
    #77, #81 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=12))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #85
    SubscribeSubject HarpTimeSource => #86
    #85, #86 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #88
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    #69, #88 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_CS2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_CS3_.csv, Selector="")
    -> PropertyMapping(FileName) => #92
    SubscribeSubject PlayCS3
    -> Condition => #94
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=AttenuationPayload_CS3))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(AttenuationLeft) => #98
    #94, #98 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=200))
    -> MulticastSubject SoundCommands => #100
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=PlaySound_CS3))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(PlaySoundOrFrequency) => #104
    #100, #104 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=13))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #108
    SubscribeSubject HarpTimeSource => #109
    #108, #109 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #111
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    #92, #111 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_CS3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_CS4_.csv, Selector="")
    -> PropertyMapping(FileName) => #115
    SubscribeSubject PlayCS4
    -> Condition => #117
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=AttenuationPayload_CS4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(AttenuationLeft) => #121
    #117, #121 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=200))
    -> MulticastSubject SoundCommands => #123
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=PlaySound_CS4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(PlaySoundOrFrequency) => #127
    #123, #127 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=14))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #131
    SubscribeSubject HarpTimeSource => #132
    #131, #132 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #134
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    #115, #134 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_CS4_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_Airpuff_.csv, Selector="")
    -> PropertyMapping(FileName) => #138
    SubscribeSubject GiveAirpuff
    -> Condition => #140
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject GiveAirpuff_Manual
    -> Condition => #142
        WorkflowInput Source1
        -> WorkflowOutput
    #140, #142 -> Merge => #143
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=AirpuffDuration))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> PropertyMapping(Value) => #147
    #143, #147 -> IntProperty(Value=200)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
    -> MulticastSubject Commands
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #154
    SubscribeSubject HarpTimeSource => #155
    #154, #155 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #157
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    #138, #157 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_Airpuff_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

GroupWorkflow TrialN_Type_log
    IntProperty(Value=0)
    -> BehaviorSubject TrialN

    IntProperty(Value=0)
    -> BehaviorSubject TrialType

    FloatProperty(Value=0)
    -> BehaviorSubject ITI

    IntProperty(Value=0)
    -> BehaviorSubject TotalReward

    SubscribeSubject TrialN => #8
    SubscribeSubject TrialType => #9
    BehaviorSubject<System.Boolean> GiveRewardCopy => #10
    -> Bonsai.Scripting.Expressions.ExpressionCondition Add+1
      Expression: it == True
    -> SelectMany RewardCount => #12
        SubscribeSubject TotalReward
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TotalReward
        -> WorkflowOutput
    #10 -> Bonsai.Scripting.Expressions.ExpressionCondition Add+0
      Expression: it == False
    -> SelectMany RewardCount => #14
        SubscribeSubject TotalReward
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=0))
        -> MulticastSubject TotalReward
        -> WorkflowOutput
    #12, #14 -> Merge => #15
    SubscribeSubject ITI => #16
    #8, #9, #10, #15, #16 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Trial#+TrialType
      Expression:
        new(
        Item1 as TrialNumber,
        Item2 as TrialType,
        Item3 as Reward,
        Item4 as TotalRewards,
        Item5 as ITI_s)
    -> Bonsai.IO.WriteLine => #19
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TrialN_TrialType_ITI_.csv, Selector="")
    -> PropertyMapping(FileName) => #22
    #19, #22 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TrialN_TrialType_ITI_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow Manual_CSUS
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualCS1_.csv, Selector="")
    -> PropertyMapping(FileName) => #7
    #4, #7 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_ManualCS1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #13
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualCS2_.csv, Selector="")
    -> PropertyMapping(FileName) => #16
    #13, #16 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_ManualCS2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #22
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualCS3_.csv, Selector="")
    -> PropertyMapping(FileName) => #25
    #22, #25 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_ManualCS3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock Space Home D0 D4 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS4
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #31
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualCS4_.csv, Selector="")
    -> PropertyMapping(FileName) => #34
    #31, #34 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_ManualCS4_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward_Manual
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #40
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualReward_.csv, Selector="")
    -> PropertyMapping(FileName) => #43
    #40, #43 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_ManualReward_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    Bonsai.Windows.Input.KeyDown(Filter="RButton B Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveBigReward
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #49
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualRewardB_.csv, Selector="")
    -> PropertyMapping(FileName) => #52
    #49, #52 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_ManualRewardB_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveAirpuff_Manual
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #58
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualAirpuff_.csv, Selector="")
    -> PropertyMapping(FileName) => #61
    #58, #61 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_ManualAirpuff_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

GroupWorkflow Init
    BehaviorSubject<Bonsai.Harp.HarpMessage> Commands => #0
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=Behavior))
    -> PropertyMapping(PortName) => #3
    #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
    -> PublishSubject BehaviorEvents
    -> Bonsai.Harp.GroupByRegister => #6
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/HarpMessages_.bin, Selector="")
    -> PropertyMapping(FileName) => #9
    #6, #9 -> Bonsai.Harp.MessageWriter
      FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/HarpMessages_.bin
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FilterType=Include
      MessageType=Write

    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject HarpTimeSource

    BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCommands => #14
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=Soundcard))
    -> PropertyMapping(PortName) => #17
    #14, #17 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11) => #18
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/SoundCardMessages_.bin, Selector="")
    -> PropertyMapping(FileName) => #21
    #18, #21 -> Bonsai.Harp.MessageWriter
      FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/SoundCardMessages_.bin
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FilterType=Include
      MessageType=Event

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\ForagingSettings\Settings_box1.csv, ScanPattern="%s,%s", SkipRows=0)
    -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
    -> Take(Count=1)
    -> AsyncSubject ComPorts

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS1

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS2

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS3

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS4

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveBigReward

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #40
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> PublishSubject LickVis
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject Lick
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #49
    #40 -> MemberSelector(Selector=Seconds) => #50
    #49, #50 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #52
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_Lick_.csv, Selector="")
    -> PropertyMapping(FileName) => #55
    #52, #55 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_Lick_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #58
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> PublishSubject FIPclockHARPvis
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject FIPclockHARP
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #67
    #58 -> MemberSelector(Selector=Seconds) => #68
    #67, #68 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #70
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_FIP_.csv, Selector="")
    -> PropertyMapping(FileName) => #73
    #70, #73 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior/TS_FIP_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject BehaviorEvents

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward_Manual

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveAirpuff

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveAirpuff_Manual

Disable GroupWorkflow "Cameras + Pupil Tracking"
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022720, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=227, Y=111, Width=118, Height=131))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis => #6
    -> Bonsai.Vision.LargestBinaryRegion
    #6 -> Bonsai.Vision.MinimumEnclosingCircle
    -> OrderByDescending(KeySelector=Radius)
    -> SelectMany
        WorkflowInput Source1
        -> Merge
        -> FirstOrDefault
        -> WorkflowOutput
    -> MemberSelector(Selector=Radius)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\PupilTracking_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #1 -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23045802, ColorProcessing=Default)
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\BodyCamera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\BodyCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="")
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

Defer "ITI(Exp+Const)"
    SubscribeSubject ExpDist
    -> Bonsai.Numerics.Distributions.Sample => #1
    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=minITI))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble(it)
    -> PropertyMapping(Value) => #5
    #1, #5 -> Add(Operand=DoubleProperty(Value=3)) => #6
    -> Bonsai.Scripting.Expressions.ExpressionTransform Convert2Sec
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT4.759S, Period=PT0S)
    -> WorkflowOutput
    #6 -> MulticastSubject ITI
-> SelectMany TrialN+1
    SubscribeSubject TrialN
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialN
    -> WorkflowOutput
-> SelectMany TaskLogic
    SubscribeSubject Dist
    -> Bonsai.Numerics.Distributions.Sample => #1
    -> Bonsai.Scripting.Expressions.ExpressionCondition "1 Reward" => #2
      Expression: it = 1
    Source4=#2 -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1 => #4
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #6
    #4, #6 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveAirpuff => #11
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "2-10 NoReward"
      Expression: it >= 2 && it <=10
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1 => #14
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #16
    #14, #16 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveAirpuff => #21
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "11-15 Reward"
      Expression: it >= 11 && it <=15
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2 => #24
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #26
    #24, #26 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveAirpuff => #31
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "16-20 No Reward"
      Expression: it >= 16 && it <=20
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2 => #34
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #36
    #34, #36 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveAirpuff => #41
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "21-29 Reward"
      Expression: it >= 21 && it <=29
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3 => #44
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #46
    #44, #46 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveAirpuff => #51
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "30 No Reward"
      Expression: it =30
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3 => #54
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #56
    #54, #56 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveAirpuff => #61
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "31-39 AirPuff"
      Expression: it >= 31 && it <=39
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS4 => #64
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #66
    #64, #66 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveAirpuff => #71
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "40 Puff"
      Expression: it =40
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS4 => #74
    SubscribeSubject DelayTime
    -> PropertyMapping(DueTime) => #76
    #74, #76 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveAirpuff => #81
    #11, #21, #31, #41, #51, #61, #71, #81 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
    #1 -> MulticastSubject TrialType

    SubscribeSubject PavParams
    -> Index(Operand=StringProperty(Value=RewardDelay))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PublishSubject DelayTime
-> RepeatCount(Count=600) => #15
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Alt", SuppressRepetitions=false)
-> BooleanProperty(Value=true) => #17
#15, #17 -> TakeUntil => #18
SubscribeSubject PavParams
-> Index(Operand=StringProperty(Value=Delay))
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Convert.ToInt32(it)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: TimeSpan.FromMinutes(it)
-> PropertyMapping(DueTime) => #23
#18, #23 -> DelaySubscription(DueTime=PT5M)

GroupWorkflow FIP_Visualizer
    SubscribeSubject Green
    -> VisualizerMapping => #1
    SubscribeSubject Iso
    -> VisualizerMapping => #3
    SubscribeSubject Red
    -> VisualizerMapping => #5
    #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject Green0
    -> VisualizerMapping => #8
    SubscribeSubject Green1
    -> VisualizerMapping => #10
    SubscribeSubject Iso0
    -> VisualizerMapping => #12
    SubscribeSubject Iso1
    -> VisualizerMapping => #14
    SubscribeSubject Red0
    -> VisualizerMapping => #16
    SubscribeSubject Red1
    -> VisualizerMapping => #18
    #8, #10, #12, #14, #16, #18 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=6, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow Photometry
    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\CameraSerial_Green.csv, ScanPattern=%s, SkipRows=0)
    -> PropertyMapping(SerialNumber)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23235880, ColorProcessing=Default) => #2
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Green => #7
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #9
    SubscribeSubject CurrentRois_G
    -> PropertyMapping(Regions) => #11
    #7, #11 -> Bonsai.Vision.RoiActivity => #12
      Regions
        ArrayOfPoint
          Point(X=87, Y=68)
          Point(X=87, Y=71)
          Point(X=86, Y=73)
          Point(X=85, Y=76)
          Point(X=84, Y=78)
          Point(X=82, Y=80)
          Point(X=80, Y=82)
          Point(X=77, Y=83)
          Point(X=75, Y=84)
          Point(X=72, Y=84)
          Point(X=70, Y=84)
          Point(X=68, Y=83)
          Point(X=65, Y=82)
          Point(X=63, Y=80)
          Point(X=61, Y=78)
          Point(X=60, Y=76)
          Point(X=59, Y=73)
          Point(X=58, Y=71)
          Point(X=58, Y=68)
          Point(X=58, Y=65)
          Point(X=59, Y=63)
          Point(X=60, Y=60)
          Point(X=61, Y=58)
          Point(X=63, Y=56)
          Point(X=65, Y=54)
          Point(X=68, Y=53)
          Point(X=70, Y=52)
          Point(X=72, Y=52)
          Point(X=75, Y=52)
          Point(X=77, Y=53)
          Point(X=80, Y=54)
          Point(X=82, Y=56)
          Point(X=84, Y=58)
          Point(X=85, Y=60)
          Point(X=86, Y=63)
          Point(X=87, Y=65)
        ArrayOfPoint
          Point(X=85, Y=128)
          Point(X=85, Y=131)
          Point(X=84, Y=133)
          Point(X=83, Y=136)
          Point(X=81, Y=139)
          Point(X=80, Y=141)
          Point(X=78, Y=143)
          Point(X=75, Y=144)
          Point(X=73, Y=145)
          Point(X=70, Y=145)
          Point(X=67, Y=145)
          Point(X=65, Y=144)
          Point(X=62, Y=143)
          Point(X=60, Y=141)
          Point(X=59, Y=139)
          Point(X=57, Y=136)
          Point(X=56, Y=133)
          Point(X=55, Y=131)
          Point(X=55, Y=128)
          Point(X=55, Y=124)
          Point(X=56, Y=122)
          Point(X=57, Y=119)
          Point(X=59, Y=116)
          Point(X=60, Y=114)
          Point(X=62, Y=112)
          Point(X=65, Y=111)
          Point(X=67, Y=110)
          Point(X=70, Y=110)
          Point(X=73, Y=110)
          Point(X=75, Y=111)
          Point(X=77, Y=112)
          Point(X=80, Y=114)
          Point(X=81, Y=116)
          Point(X=83, Y=119)
          Point(X=84, Y=122)
          Point(X=85, Y=124)
        ArrayOfPoint
          Point(X=146, Y=137)
          Point(X=146, Y=140)
          Point(X=145, Y=143)
          Point(X=144, Y=146)
          Point(X=142, Y=148)
          Point(X=141, Y=150)
          Point(X=138, Y=152)
          Point(X=136, Y=153)
          Point(X=134, Y=154)
          Point(X=131, Y=154)
          Point(X=128, Y=154)
          Point(X=126, Y=153)
          Point(X=124, Y=152)
          Point(X=121, Y=150)
          Point(X=120, Y=148)
          Point(X=118, Y=146)
          Point(X=117, Y=143)
          Point(X=116, Y=140)
          Point(X=116, Y=137)
          Point(X=116, Y=134)
          Point(X=117, Y=131)
          Point(X=118, Y=128)
          Point(X=120, Y=126)
          Point(X=121, Y=124)
          Point(X=124, Y=122)
          Point(X=126, Y=121)
          Point(X=128, Y=120)
          Point(X=131, Y=120)
          Point(X=134, Y=120)
          Point(X=136, Y=121)
          Point(X=138, Y=122)
          Point(X=141, Y=124)
          Point(X=142, Y=126)
          Point(X=144, Y=128)
          Point(X=145, Y=131)
          Point(X=146, Y=134)
        ArrayOfPoint
          Point(X=156, Y=75)
          Point(X=156, Y=78)
          Point(X=155, Y=81)
          Point(X=154, Y=84)
          Point(X=152, Y=86)
          Point(X=150, Y=88)
          Point(X=148, Y=90)
          Point(X=146, Y=91)
          Point(X=143, Y=92)
          Point(X=140, Y=92)
          Point(X=138, Y=92)
          Point(X=135, Y=91)
          Point(X=133, Y=90)
          Point(X=131, Y=88)
          Point(X=129, Y=86)
          Point(X=127, Y=84)
          Point(X=126, Y=81)
          Point(X=125, Y=78)
          Point(X=125, Y=75)
          Point(X=125, Y=73)
          Point(X=126, Y=70)
          Point(X=127, Y=67)
          Point(X=129, Y=65)
          Point(X=131, Y=63)
          Point(X=133, Y=61)
          Point(X=135, Y=60)
          Point(X=138, Y=59)
          Point(X=140, Y=59)
          Point(X=143, Y=59)
          Point(X=146, Y=60)
          Point(X=148, Y=61)
          Point(X=150, Y=63)
          Point(X=152, Y=65)
          Point(X=154, Y=67)
          Point(X=155, Y=70)
          Point(X=156, Y=73)
        ArrayOfPoint(Point(X=1, Y=163), Point(X=18, Y=163), Point(X=18, Y=199), Point(X=1, Y=199))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green0 => #15
    #12 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green1 => #18
    #12 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #20
    #12 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #22
    #12 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #24
    #9, #15, #18, #20, #22, #24 -> Zip => #25
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataG_.csv, Selector="")
    -> PropertyMapping(FileName) => #28
    #25, #28 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_DataG_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawG_.bin, Selector="")
    -> PropertyMapping(Path) => #32
    #7, #32 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_RawG_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #2 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Iso => #38
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #40
    SubscribeSubject CurrentRois_G
    -> PropertyMapping(Regions) => #42
    #38, #42 -> Bonsai.Vision.RoiActivity => #43
      Regions
        ArrayOfPoint
          Point(X=87, Y=68)
          Point(X=87, Y=71)
          Point(X=86, Y=73)
          Point(X=85, Y=76)
          Point(X=84, Y=78)
          Point(X=82, Y=80)
          Point(X=80, Y=82)
          Point(X=77, Y=83)
          Point(X=75, Y=84)
          Point(X=72, Y=84)
          Point(X=70, Y=84)
          Point(X=68, Y=83)
          Point(X=65, Y=82)
          Point(X=63, Y=80)
          Point(X=61, Y=78)
          Point(X=60, Y=76)
          Point(X=59, Y=73)
          Point(X=58, Y=71)
          Point(X=58, Y=68)
          Point(X=58, Y=65)
          Point(X=59, Y=63)
          Point(X=60, Y=60)
          Point(X=61, Y=58)
          Point(X=63, Y=56)
          Point(X=65, Y=54)
          Point(X=68, Y=53)
          Point(X=70, Y=52)
          Point(X=72, Y=52)
          Point(X=75, Y=52)
          Point(X=77, Y=53)
          Point(X=80, Y=54)
          Point(X=82, Y=56)
          Point(X=84, Y=58)
          Point(X=85, Y=60)
          Point(X=86, Y=63)
          Point(X=87, Y=65)
        ArrayOfPoint
          Point(X=85, Y=128)
          Point(X=85, Y=131)
          Point(X=84, Y=133)
          Point(X=83, Y=136)
          Point(X=81, Y=139)
          Point(X=80, Y=141)
          Point(X=78, Y=143)
          Point(X=75, Y=144)
          Point(X=73, Y=145)
          Point(X=70, Y=145)
          Point(X=67, Y=145)
          Point(X=65, Y=144)
          Point(X=62, Y=143)
          Point(X=60, Y=141)
          Point(X=59, Y=139)
          Point(X=57, Y=136)
          Point(X=56, Y=133)
          Point(X=55, Y=131)
          Point(X=55, Y=128)
          Point(X=55, Y=124)
          Point(X=56, Y=122)
          Point(X=57, Y=119)
          Point(X=59, Y=116)
          Point(X=60, Y=114)
          Point(X=62, Y=112)
          Point(X=65, Y=111)
          Point(X=67, Y=110)
          Point(X=70, Y=110)
          Point(X=73, Y=110)
          Point(X=75, Y=111)
          Point(X=77, Y=112)
          Point(X=80, Y=114)
          Point(X=81, Y=116)
          Point(X=83, Y=119)
          Point(X=84, Y=122)
          Point(X=85, Y=124)
        ArrayOfPoint
          Point(X=146, Y=137)
          Point(X=146, Y=140)
          Point(X=145, Y=143)
          Point(X=144, Y=146)
          Point(X=142, Y=148)
          Point(X=141, Y=150)
          Point(X=138, Y=152)
          Point(X=136, Y=153)
          Point(X=134, Y=154)
          Point(X=131, Y=154)
          Point(X=128, Y=154)
          Point(X=126, Y=153)
          Point(X=124, Y=152)
          Point(X=121, Y=150)
          Point(X=120, Y=148)
          Point(X=118, Y=146)
          Point(X=117, Y=143)
          Point(X=116, Y=140)
          Point(X=116, Y=137)
          Point(X=116, Y=134)
          Point(X=117, Y=131)
          Point(X=118, Y=128)
          Point(X=120, Y=126)
          Point(X=121, Y=124)
          Point(X=124, Y=122)
          Point(X=126, Y=121)
          Point(X=128, Y=120)
          Point(X=131, Y=120)
          Point(X=134, Y=120)
          Point(X=136, Y=121)
          Point(X=138, Y=122)
          Point(X=141, Y=124)
          Point(X=142, Y=126)
          Point(X=144, Y=128)
          Point(X=145, Y=131)
          Point(X=146, Y=134)
        ArrayOfPoint
          Point(X=156, Y=75)
          Point(X=156, Y=78)
          Point(X=155, Y=81)
          Point(X=154, Y=84)
          Point(X=152, Y=86)
          Point(X=150, Y=88)
          Point(X=148, Y=90)
          Point(X=146, Y=91)
          Point(X=143, Y=92)
          Point(X=140, Y=92)
          Point(X=138, Y=92)
          Point(X=135, Y=91)
          Point(X=133, Y=90)
          Point(X=131, Y=88)
          Point(X=129, Y=86)
          Point(X=127, Y=84)
          Point(X=126, Y=81)
          Point(X=125, Y=78)
          Point(X=125, Y=75)
          Point(X=125, Y=73)
          Point(X=126, Y=70)
          Point(X=127, Y=67)
          Point(X=129, Y=65)
          Point(X=131, Y=63)
          Point(X=133, Y=61)
          Point(X=135, Y=60)
          Point(X=138, Y=59)
          Point(X=140, Y=59)
          Point(X=143, Y=59)
          Point(X=146, Y=60)
          Point(X=148, Y=61)
          Point(X=150, Y=63)
          Point(X=152, Y=65)
          Point(X=154, Y=67)
          Point(X=155, Y=70)
          Point(X=156, Y=73)
        ArrayOfPoint(Point(X=1, Y=163), Point(X=18, Y=163), Point(X=18, Y=199), Point(X=1, Y=199))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso0 => #46
    #43 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso1 => #49
    #43 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #51
    #43 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #53
    #43 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #55
    #40, #46, #49, #51, #53, #55 -> Zip => #56
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataIso_.csv, Selector="")
    -> PropertyMapping(FileName) => #59
    #56, #59 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_DataIso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawIso_.bin, Selector="")
    -> PropertyMapping(Path) => #63
    #38, #63 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_RawIso_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #2 -> MemberSelector(Selector=ChunkData)
    -> MemberSelector(Selector=Timestamp) => #66
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/TS_FLIR_G-Iso_.csv, Selector="")
    -> PropertyMapping(FileName) => #69
    #66, #69 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/TS_FLIR_G-Iso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\CameraSerial_Red.csv, ScanPattern=%s, SkipRows=0)
    -> PropertyMapping(SerialNumber)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23235876, ColorProcessing=Default) => #73
    -> MemberSelector(Selector=Image) => #74
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #76
    #74 -> Bonsai.Vision.Flip(Mode=Horizontal)
    -> PublishSubject Red => #78
    SubscribeSubject CurrentRois_R
    -> PropertyMapping(Regions) => #80
    #78, #80 -> Bonsai.Vision.RoiActivity => #81
      Regions
        ArrayOfPoint
          Point(X=90, Y=67)
          Point(X=90, Y=70)
          Point(X=89, Y=73)
          Point(X=88, Y=76)
          Point(X=86, Y=79)
          Point(X=84, Y=81)
          Point(X=82, Y=83)
          Point(X=80, Y=84)
          Point(X=77, Y=85)
          Point(X=74, Y=85)
          Point(X=72, Y=85)
          Point(X=69, Y=84)
          Point(X=67, Y=83)
          Point(X=65, Y=81)
          Point(X=63, Y=79)
          Point(X=61, Y=76)
          Point(X=60, Y=73)
          Point(X=59, Y=70)
          Point(X=59, Y=67)
          Point(X=59, Y=64)
          Point(X=60, Y=61)
          Point(X=61, Y=58)
          Point(X=63, Y=55)
          Point(X=65, Y=53)
          Point(X=67, Y=51)
          Point(X=69, Y=50)
          Point(X=72, Y=49)
          Point(X=74, Y=49)
          Point(X=77, Y=49)
          Point(X=80, Y=50)
          Point(X=82, Y=51)
          Point(X=84, Y=53)
          Point(X=86, Y=55)
          Point(X=88, Y=58)
          Point(X=89, Y=61)
          Point(X=90, Y=64)
        ArrayOfPoint
          Point(X=87, Y=127)
          Point(X=87, Y=130)
          Point(X=86, Y=133)
          Point(X=85, Y=135)
          Point(X=84, Y=137)
          Point(X=82, Y=139)
          Point(X=80, Y=141)
          Point(X=78, Y=142)
          Point(X=75, Y=143)
          Point(X=73, Y=143)
          Point(X=71, Y=143)
          Point(X=68, Y=142)
          Point(X=66, Y=141)
          Point(X=64, Y=139)
          Point(X=62, Y=137)
          Point(X=61, Y=135)
          Point(X=60, Y=133)
          Point(X=59, Y=130)
          Point(X=59, Y=127)
          Point(X=59, Y=125)
          Point(X=60, Y=122)
          Point(X=61, Y=120)
          Point(X=62, Y=118)
          Point(X=64, Y=116)
          Point(X=66, Y=114)
          Point(X=68, Y=113)
          Point(X=71, Y=112)
          Point(X=73, Y=112)
          Point(X=75, Y=112)
          Point(X=78, Y=113)
          Point(X=80, Y=114)
          Point(X=82, Y=116)
          Point(X=84, Y=118)
          Point(X=85, Y=120)
          Point(X=86, Y=122)
          Point(X=87, Y=125)
        ArrayOfPoint
          Point(X=146, Y=134)
          Point(X=146, Y=137)
          Point(X=145, Y=140)
          Point(X=144, Y=143)
          Point(X=142, Y=145)
          Point(X=141, Y=147)
          Point(X=139, Y=149)
          Point(X=136, Y=150)
          Point(X=134, Y=151)
          Point(X=131, Y=151)
          Point(X=128, Y=151)
          Point(X=126, Y=150)
          Point(X=123, Y=149)
          Point(X=121, Y=147)
          Point(X=120, Y=145)
          Point(X=118, Y=143)
          Point(X=117, Y=140)
          Point(X=116, Y=137)
          Point(X=116, Y=134)
          Point(X=116, Y=132)
          Point(X=117, Y=129)
          Point(X=118, Y=126)
          Point(X=120, Y=124)
          Point(X=121, Y=122)
          Point(X=123, Y=120)
          Point(X=126, Y=119)
          Point(X=128, Y=118)
          Point(X=131, Y=118)
          Point(X=134, Y=118)
          Point(X=136, Y=119)
          Point(X=138, Y=120)
          Point(X=141, Y=122)
          Point(X=142, Y=124)
          Point(X=144, Y=126)
          Point(X=145, Y=129)
          Point(X=146, Y=132)
        ArrayOfPoint
          Point(X=154, Y=74)
          Point(X=154, Y=77)
          Point(X=153, Y=79)
          Point(X=152, Y=81)
          Point(X=151, Y=84)
          Point(X=149, Y=85)
          Point(X=147, Y=87)
          Point(X=145, Y=88)
          Point(X=142, Y=89)
          Point(X=140, Y=89)
          Point(X=138, Y=89)
          Point(X=135, Y=88)
          Point(X=133, Y=87)
          Point(X=131, Y=85)
          Point(X=129, Y=84)
          Point(X=128, Y=81)
          Point(X=127, Y=79)
          Point(X=126, Y=77)
          Point(X=126, Y=74)
          Point(X=126, Y=71)
          Point(X=127, Y=69)
          Point(X=128, Y=67)
          Point(X=129, Y=64)
          Point(X=131, Y=63)
          Point(X=133, Y=61)
          Point(X=135, Y=60)
          Point(X=138, Y=59)
          Point(X=140, Y=59)
          Point(X=142, Y=59)
          Point(X=145, Y=60)
          Point(X=147, Y=61)
          Point(X=149, Y=63)
          Point(X=151, Y=64)
          Point(X=152, Y=67)
          Point(X=153, Y=69)
          Point(X=154, Y=71)
        ArrayOfPoint(Point(X=0, Y=158), Point(X=17, Y=158), Point(X=17, Y=199), Point(X=0, Y=199))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red0 => #84
    #81 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red1 => #87
    #81 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #89
    #81 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #91
    #81 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #93
    #76, #84, #87, #89, #91, #93 -> Zip => #94
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataR_.csv, Selector="")
    -> PropertyMapping(FileName) => #97
    #94, #97 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_DataR_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawR_.bin, Selector="")
    -> PropertyMapping(Path) => #101
    #78, #101 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_RawR_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #73 -> MemberSelector(Selector=ChunkData.Timestamp) => #103
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/TS_FLIR_R_.csv, Selector="")
    -> PropertyMapping(FileName) => #106
    #103, #106 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/TS_FLIR_R_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject Green
    -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]> => #109
      MemberName=Regions
      Value
        ArrayOfPoint
          Point(X=87, Y=68)
          Point(X=87, Y=71)
          Point(X=86, Y=73)
          Point(X=85, Y=76)
          Point(X=84, Y=78)
          Point(X=82, Y=80)
          Point(X=80, Y=82)
          Point(X=77, Y=83)
          Point(X=75, Y=84)
          Point(X=72, Y=84)
          Point(X=70, Y=84)
          Point(X=68, Y=83)
          Point(X=65, Y=82)
          Point(X=63, Y=80)
          Point(X=61, Y=78)
          Point(X=60, Y=76)
          Point(X=59, Y=73)
          Point(X=58, Y=71)
          Point(X=58, Y=68)
          Point(X=58, Y=65)
          Point(X=59, Y=63)
          Point(X=60, Y=60)
          Point(X=61, Y=58)
          Point(X=63, Y=56)
          Point(X=65, Y=54)
          Point(X=68, Y=53)
          Point(X=70, Y=52)
          Point(X=72, Y=52)
          Point(X=75, Y=52)
          Point(X=77, Y=53)
          Point(X=80, Y=54)
          Point(X=82, Y=56)
          Point(X=84, Y=58)
          Point(X=85, Y=60)
          Point(X=86, Y=63)
          Point(X=87, Y=65)
        ArrayOfPoint
          Point(X=85, Y=128)
          Point(X=85, Y=131)
          Point(X=84, Y=133)
          Point(X=83, Y=136)
          Point(X=81, Y=139)
          Point(X=80, Y=141)
          Point(X=78, Y=143)
          Point(X=75, Y=144)
          Point(X=73, Y=145)
          Point(X=70, Y=145)
          Point(X=67, Y=145)
          Point(X=65, Y=144)
          Point(X=62, Y=143)
          Point(X=60, Y=141)
          Point(X=59, Y=139)
          Point(X=57, Y=136)
          Point(X=56, Y=133)
          Point(X=55, Y=131)
          Point(X=55, Y=128)
          Point(X=55, Y=124)
          Point(X=56, Y=122)
          Point(X=57, Y=119)
          Point(X=59, Y=116)
          Point(X=60, Y=114)
          Point(X=62, Y=112)
          Point(X=65, Y=111)
          Point(X=67, Y=110)
          Point(X=70, Y=110)
          Point(X=73, Y=110)
          Point(X=75, Y=111)
          Point(X=77, Y=112)
          Point(X=80, Y=114)
          Point(X=81, Y=116)
          Point(X=83, Y=119)
          Point(X=84, Y=122)
          Point(X=85, Y=124)
        ArrayOfPoint
          Point(X=146, Y=137)
          Point(X=146, Y=140)
          Point(X=145, Y=143)
          Point(X=144, Y=146)
          Point(X=142, Y=148)
          Point(X=141, Y=150)
          Point(X=138, Y=152)
          Point(X=136, Y=153)
          Point(X=134, Y=154)
          Point(X=131, Y=154)
          Point(X=128, Y=154)
          Point(X=126, Y=153)
          Point(X=124, Y=152)
          Point(X=121, Y=150)
          Point(X=120, Y=148)
          Point(X=118, Y=146)
          Point(X=117, Y=143)
          Point(X=116, Y=140)
          Point(X=116, Y=137)
          Point(X=116, Y=134)
          Point(X=117, Y=131)
          Point(X=118, Y=128)
          Point(X=120, Y=126)
          Point(X=121, Y=124)
          Point(X=124, Y=122)
          Point(X=126, Y=121)
          Point(X=128, Y=120)
          Point(X=131, Y=120)
          Point(X=134, Y=120)
          Point(X=136, Y=121)
          Point(X=138, Y=122)
          Point(X=141, Y=124)
          Point(X=142, Y=126)
          Point(X=144, Y=128)
          Point(X=145, Y=131)
          Point(X=146, Y=134)
        ArrayOfPoint
          Point(X=156, Y=75)
          Point(X=156, Y=78)
          Point(X=155, Y=81)
          Point(X=154, Y=84)
          Point(X=152, Y=86)
          Point(X=150, Y=88)
          Point(X=148, Y=90)
          Point(X=146, Y=91)
          Point(X=143, Y=92)
          Point(X=140, Y=92)
          Point(X=138, Y=92)
          Point(X=135, Y=91)
          Point(X=133, Y=90)
          Point(X=131, Y=88)
          Point(X=129, Y=86)
          Point(X=127, Y=84)
          Point(X=126, Y=81)
          Point(X=125, Y=78)
          Point(X=125, Y=75)
          Point(X=125, Y=73)
          Point(X=126, Y=70)
          Point(X=127, Y=67)
          Point(X=129, Y=65)
          Point(X=131, Y=63)
          Point(X=133, Y=61)
          Point(X=135, Y=60)
          Point(X=138, Y=59)
          Point(X=140, Y=59)
          Point(X=143, Y=59)
          Point(X=146, Y=60)
          Point(X=148, Y=61)
          Point(X=150, Y=63)
          Point(X=152, Y=65)
          Point(X=154, Y=67)
          Point(X=155, Y=70)
          Point(X=156, Y=73)
        ArrayOfPoint(Point(X=1, Y=163), Point(X=18, Y=163), Point(X=18, Y=199), Point(X=1, Y=199))
    Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode A D E P Q T U Alt", SuppressRepetitions=false) => #110
    #109, #110 -> Sample
    -> MulticastSubject CurrentRois_G
    -> CreateObservable ROICsv_update
        WorkflowInput Source1
        -> Take(Count=1)
        -> SelectMany LogRois
            SubscribeSubject CurrentRois_G
            -> Merge
            -> ElementIndex
            -> SelectMany SaveSingleRoi
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Data

                SubscribeSubject Data
                -> MemberSelector(Selector=Index)
                -> AsyncSubject RoiIndex

                SubscribeSubject RoiIndex => #6
                SubscribeSubject Data
                -> MemberSelector(Selector=Value)
                -> Merge
                -> ElementIndex => #10
                #6, #10 -> CombineLatest
                -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_G.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
        -> WorkflowOutput
    -> Merge
    -> DelaySubscription(DueTime=PT0.5S)

    SubscribeSubject Red
    -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]> => #117
      MemberName=Regions
      Value
        ArrayOfPoint
          Point(X=90, Y=67)
          Point(X=90, Y=70)
          Point(X=89, Y=73)
          Point(X=88, Y=76)
          Point(X=86, Y=79)
          Point(X=84, Y=81)
          Point(X=82, Y=83)
          Point(X=80, Y=84)
          Point(X=77, Y=85)
          Point(X=74, Y=85)
          Point(X=72, Y=85)
          Point(X=69, Y=84)
          Point(X=67, Y=83)
          Point(X=65, Y=81)
          Point(X=63, Y=79)
          Point(X=61, Y=76)
          Point(X=60, Y=73)
          Point(X=59, Y=70)
          Point(X=59, Y=67)
          Point(X=59, Y=64)
          Point(X=60, Y=61)
          Point(X=61, Y=58)
          Point(X=63, Y=55)
          Point(X=65, Y=53)
          Point(X=67, Y=51)
          Point(X=69, Y=50)
          Point(X=72, Y=49)
          Point(X=74, Y=49)
          Point(X=77, Y=49)
          Point(X=80, Y=50)
          Point(X=82, Y=51)
          Point(X=84, Y=53)
          Point(X=86, Y=55)
          Point(X=88, Y=58)
          Point(X=89, Y=61)
          Point(X=90, Y=64)
        ArrayOfPoint
          Point(X=87, Y=127)
          Point(X=87, Y=130)
          Point(X=86, Y=133)
          Point(X=85, Y=135)
          Point(X=84, Y=137)
          Point(X=82, Y=139)
          Point(X=80, Y=141)
          Point(X=78, Y=142)
          Point(X=75, Y=143)
          Point(X=73, Y=143)
          Point(X=71, Y=143)
          Point(X=68, Y=142)
          Point(X=66, Y=141)
          Point(X=64, Y=139)
          Point(X=62, Y=137)
          Point(X=61, Y=135)
          Point(X=60, Y=133)
          Point(X=59, Y=130)
          Point(X=59, Y=127)
          Point(X=59, Y=125)
          Point(X=60, Y=122)
          Point(X=61, Y=120)
          Point(X=62, Y=118)
          Point(X=64, Y=116)
          Point(X=66, Y=114)
          Point(X=68, Y=113)
          Point(X=71, Y=112)
          Point(X=73, Y=112)
          Point(X=75, Y=112)
          Point(X=78, Y=113)
          Point(X=80, Y=114)
          Point(X=82, Y=116)
          Point(X=84, Y=118)
          Point(X=85, Y=120)
          Point(X=86, Y=122)
          Point(X=87, Y=125)
        ArrayOfPoint
          Point(X=146, Y=134)
          Point(X=146, Y=137)
          Point(X=145, Y=140)
          Point(X=144, Y=143)
          Point(X=142, Y=145)
          Point(X=141, Y=147)
          Point(X=139, Y=149)
          Point(X=136, Y=150)
          Point(X=134, Y=151)
          Point(X=131, Y=151)
          Point(X=128, Y=151)
          Point(X=126, Y=150)
          Point(X=123, Y=149)
          Point(X=121, Y=147)
          Point(X=120, Y=145)
          Point(X=118, Y=143)
          Point(X=117, Y=140)
          Point(X=116, Y=137)
          Point(X=116, Y=134)
          Point(X=116, Y=132)
          Point(X=117, Y=129)
          Point(X=118, Y=126)
          Point(X=120, Y=124)
          Point(X=121, Y=122)
          Point(X=123, Y=120)
          Point(X=126, Y=119)
          Point(X=128, Y=118)
          Point(X=131, Y=118)
          Point(X=134, Y=118)
          Point(X=136, Y=119)
          Point(X=138, Y=120)
          Point(X=141, Y=122)
          Point(X=142, Y=124)
          Point(X=144, Y=126)
          Point(X=145, Y=129)
          Point(X=146, Y=132)
        ArrayOfPoint
          Point(X=154, Y=74)
          Point(X=154, Y=77)
          Point(X=153, Y=79)
          Point(X=152, Y=81)
          Point(X=151, Y=84)
          Point(X=149, Y=85)
          Point(X=147, Y=87)
          Point(X=145, Y=88)
          Point(X=142, Y=89)
          Point(X=140, Y=89)
          Point(X=138, Y=89)
          Point(X=135, Y=88)
          Point(X=133, Y=87)
          Point(X=131, Y=85)
          Point(X=129, Y=84)
          Point(X=128, Y=81)
          Point(X=127, Y=79)
          Point(X=126, Y=77)
          Point(X=126, Y=74)
          Point(X=126, Y=71)
          Point(X=127, Y=69)
          Point(X=128, Y=67)
          Point(X=129, Y=64)
          Point(X=131, Y=63)
          Point(X=133, Y=61)
          Point(X=135, Y=60)
          Point(X=138, Y=59)
          Point(X=140, Y=59)
          Point(X=142, Y=59)
          Point(X=145, Y=60)
          Point(X=147, Y=61)
          Point(X=149, Y=63)
          Point(X=151, Y=64)
          Point(X=152, Y=67)
          Point(X=153, Y=69)
          Point(X=154, Y=71)
        ArrayOfPoint(Point(X=0, Y=158), Point(X=17, Y=158), Point(X=17, Y=199), Point(X=0, Y=199))
    Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode A D E P Q T U Alt", SuppressRepetitions=false) => #118
    #117, #118 -> Sample
    -> MulticastSubject CurrentRois_R
    -> CreateObservable ROICsv_update
        WorkflowInput Source1
        -> Take(Count=1)
        -> SelectMany LogRois
            SubscribeSubject CurrentRois_R
            -> Merge
            -> ElementIndex
            -> SelectMany SaveSingleRoi
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Data

                SubscribeSubject Data
                -> MemberSelector(Selector=Index)
                -> AsyncSubject RoiIndex

                SubscribeSubject RoiIndex => #6
                SubscribeSubject Data
                -> MemberSelector(Selector=Value)
                -> Merge
                -> ElementIndex => #10
                #6, #10 -> CombineLatest
                -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_R.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
        -> WorkflowOutput
    -> Merge
    -> DelaySubscription(DueTime=PT0.5S)

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_G.csv, ScanPattern="%i,%i,%i,%i", SkipRows=1)
    -> ToArray
    -> OrderBy(KeySelector="Item1,Item2")
    -> Merge
    -> GroupBy(KeySelector=Item1)
    -> SelectMany ConstructRois
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item3), Y(Selector=Item4))
        -> Bonsai.Vision.CreatePoint(X=1, Y=199)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> MulticastSubject CurrentRois_G

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_R.csv, ScanPattern="%i,%i,%i,%i", SkipRows=1)
    -> ToArray
    -> OrderBy(KeySelector="Item1,Item2")
    -> Merge
    -> GroupBy(KeySelector=Item1)
    -> SelectMany ConstructRois
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item3), Y(Selector=Item4))
        -> Bonsai.Vision.CreatePoint(X=0, Y=199)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> MulticastSubject CurrentRois_R

    BehaviorSubject<OpenCV.Net.Point[][]> CurrentRois_G
    BehaviorSubject<OpenCV.Net.Point[][]> CurrentRois_R

    SubscribeSubject CurrentRois_G
    -> SelectMany LogRois => #143
        SubscribeSubject CurrentRois_G
        -> Merge
        -> ElementIndex
        -> SelectMany SaveSingleRoi
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Data

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> AsyncSubject RoiIndex

            SubscribeSubject RoiIndex => #6
            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> ElementIndex => #10
            #6, #10 -> CombineLatest
            -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_ROIsG-Iso_.csv, Selector="")
    -> PropertyMapping(FileName) => #146
    #143, #146 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_ROIsG-Iso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> DelaySubscription(DueTime=PT0.5S)

    SubscribeSubject CurrentRois_R
    -> SelectMany LogRois => #150
        SubscribeSubject CurrentRois_R
        -> Merge
        -> ElementIndex
        -> SelectMany SaveSingleRoi
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Data

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> AsyncSubject RoiIndex

            SubscribeSubject RoiIndex => #6
            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> ElementIndex => #10
            #6, #10 -> CombineLatest
            -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_ROIsR_.csv, Selector="")
    -> PropertyMapping(FileName) => #153
    #150, #153 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/fib/FIP_ROIsR_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> DelaySubscription(DueTime=PT0.5S)

    Bonsai.Design.Visualizers.TableLayoutPanelBuilder "FIP Measurements"
      ColumnCount=4
      RowCount=6
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)

GroupWorkflow HighSpeedVideo
    GroupWorkflow SideCamRight
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=SideCameraRight))
        -> PropertyMapping(SerialNumber)
        -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=22511925, ColorProcessing=Default) => #3
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
        -> MemberSelector(Selector=Seconds) => #6
        #3, #6 -> Zip
        -> PublishSubject SideCameraRightFrames
        #3 -> MemberSelector(Selector=Image)
        -> PublishSubject SideCameraRightImage

        SubscribeSubject SideCameraRightFrames
        -> Bonsai.Harp.CreateTimestamped => #12
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/side_camera_right.csv, Selector="")
        -> PropertyMapping(FileName) => #15
        #12, #15 -> Bonsai.IO.CsvWriter
          FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior-videos/side_camera_right.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=false
          Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
        -> MemberSelector(Selector=Value.Image) => #17
        Disable SubscribeSubject RootPath
        -> Disable Format(Format={0}/behavior-videos/side_camera_right.avi, Selector="")
        -> Disable PropertyMapping(FileName) => #20
        Disable IntProperty(Value=120)
        -> Disable PropertyMapping(FrameRate) => #22
        Disable SubscribeSubject ComPorts
        -> Disable Index(Operand=StringProperty(Value=codec))
        -> Disable PropertyMapping(OutputArguments) => #25
        #17, #20, #22, #25 -> Disable Bonsai.FFmpeg.VideoWriter
          FileName=C:\behavior_data\428-9-A\000003\2024_06_16\/behavior-videos/side_camera_right.avi
          Suffix=Timestamp
          Overwrite=true
          FrameRate=120
          OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/side_camera_right.avi, Selector="")
        -> PropertyMapping(FileName) => #29
        #17, #29 -> Bonsai.Vision.VideoWriter
          FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior-videos/side_camera_right.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=120
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor

    GroupWorkflow BottomCam
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=BottomCamera))
        -> PropertyMapping(SerialNumber)
        -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022715, ColorProcessing=Default) => #3
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
        -> MemberSelector(Selector=Seconds) => #6
        #3, #6 -> Zip
        -> PublishSubject BottomCameraFrames
        #3 -> MemberSelector(Selector=Image)
        -> PublishSubject BottomCameraImage

        SubscribeSubject BottomCameraFrames
        -> Bonsai.Harp.CreateTimestamped => #12
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/bottom_camera.csv, Selector="")
        -> PropertyMapping(FileName) => #15
        #12, #15 -> Bonsai.IO.CsvWriter
          FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior-videos/bottom_camera.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=false
          Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
        -> MemberSelector(Selector=Value.Image) => #17
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/bottom_camera.avi, Selector="")
        -> PropertyMapping(FileName) => #20
        #17, #20 -> Bonsai.Vision.VideoWriter
          FileName=C:\behavior_data\428-9-A\746346\2025_04_11\/behavior-videos/bottom_camera.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=120
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        Disable SubscribeSubject RootPath
        -> Disable Format(Format={0}/behavior-videos/bottom_camera.avi, Selector="")
        -> Disable PropertyMapping(FileName) => #24
        Disable IntProperty(Value=120)
        -> Disable PropertyMapping(FrameRate) => #26
        Disable SubscribeSubject ComPorts
        -> Disable Index(Operand=StringProperty(Value=codec))
        -> Disable PropertyMapping(OutputArguments) => #29
        #17, #24, #26, #29 -> Disable Bonsai.FFmpeg.VideoWriter
          FileName=C:\behavior_data\428-9-A\000003\2024_06_16\/behavior-videos/bottom_camera.avi
          Suffix=Timestamp
          Overwrite=true
          FrameRate=120
          OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"

    IntProperty(Value=120)
    -> PropertyMapping(Camera1Frequency)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera1FrequencyPayload(Camera1Frequency=120))
    -> MulticastSubject Commands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1))
    -> Delay(DueTime=PT2S)
    -> MulticastSubject Commands

    SubscribeSubject SideCameraRightImage
    -> VisualizerMapping => #10
    SubscribeSubject BottomCameraImage
    -> VisualizerMapping => #12
    #10, #12 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
