WorkflowBuilder(Version=2.8.2)
GroupWorkflow RandGen
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject Rng

    SubscribeSubject Rng
    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.2)
    -> AsyncSubject ExpDist

    SubscribeSubject Rng
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=30)
    -> AsyncSubject Dist

GroupWorkflow CSUS_Action
    SubscribeSubject GiveReward
    -> MulticastSubject GiveRewardCopy
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject GiveReward_Manual
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #2, #4 -> Merge => #5
    SubscribeSubject Params
    -> Index(Operand=StringProperty(Value=RewardSize))
    -> PropertyMapping(Value) => #8
    #5, #8 -> IntProperty(Value=13)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #15
    SubscribeSubject HarpTimeSource => #16
    #16, #15 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> MemberSelector(Selector=Seconds) => #19
    #15, #19 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_Reward_.csv, Selector="")
    -> PropertyMapping(FileName) => #24
    #21, #24 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_Reward_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject GiveBigReward
    -> Condition => #27
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Params
    -> Index(Operand=StringProperty(Value=RewardSize_big))
    -> PropertyMapping(Value) => #30
    #27, #30 -> IntProperty(Value=30)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #37
    SubscribeSubject HarpTimeSource => #38
    #38, #37 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> MemberSelector(Selector=Seconds) => #41
    #37, #41 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #43
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_RewardB_.csv, Selector="")
    -> PropertyMapping(FileName) => #46
    #43, #46 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_RewardB_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject PlayCS1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=400))
    -> MulticastSubject SoundCommands
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=11))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #55
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_CS1_.csv, Selector="")
    -> PropertyMapping(FileName) => #58
    #55, #58 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_CS1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject PlayCS2
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=400))
    -> MulticastSubject SoundCommands
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=12))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #67
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_CS2_.csv, Selector="")
    -> PropertyMapping(FileName) => #70
    #67, #70 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_CS2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject PlayCS3
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=400))
    -> MulticastSubject SoundCommands
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=13))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #79
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_CS3_.csv, Selector="")
    -> PropertyMapping(FileName) => #82
    #79, #82 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_CS3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow TrialN_Type_log
    IntProperty(Value=0)
    -> BehaviorSubject TrialN

    IntProperty(Value=0)
    -> BehaviorSubject TrialType

    FloatProperty(Value=0)
    -> BehaviorSubject ITI

    IntProperty(Value=0)
    -> BehaviorSubject TotalReward

    SubscribeSubject TrialN => #8
    SubscribeSubject TrialType => #9
    BehaviorSubject<System.Boolean> GiveRewardCopy => #10
    -> Bonsai.Scripting.Expressions.ExpressionCondition Add+1
      Expression: it == True
    -> SelectMany RewardCount => #12
        SubscribeSubject TotalReward
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TotalReward
        -> WorkflowOutput
    #10 -> Bonsai.Scripting.Expressions.ExpressionCondition Add+0
      Expression: it == False
    -> SelectMany RewardCount => #14
        SubscribeSubject TotalReward
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=0))
        -> MulticastSubject TotalReward
        -> WorkflowOutput
    #12, #14 -> Merge => #15
    SubscribeSubject ITI => #16
    #8, #9, #10, #15, #16 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Trial#+TrialType
      Expression:
        new(
        Item1 as TrialNumber,
        Item2 as TrialType,
        Item3 as Reward,
        Item4 as TotalRewards,
        Item5 as ITI_s)
    -> Bonsai.IO.WriteLine => #19
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TrialN_TrialType_ITI_.csv, Selector="")
    -> PropertyMapping(FileName) => #22
    #19, #22 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TrialN_TrialType_ITI_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow Manual_CSUS
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualCS1_.csv, Selector="")
    -> PropertyMapping(FileName) => #7
    #4, #7 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_ManualCS1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #13
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualCS2_.csv, Selector="")
    -> PropertyMapping(FileName) => #16
    #13, #16 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_ManualCS2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #22
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualCS3_.csv, Selector="")
    -> PropertyMapping(FileName) => #25
    #22, #25 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_ManualCS3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward_Manual
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #31
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualReward_.csv, Selector="")
    -> PropertyMapping(FileName) => #34
    #31, #34 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_ManualReward_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    Bonsai.Windows.Input.KeyDown(Filter="RButton B Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveBigReward
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #40
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_ManualRewardB_.csv, Selector="")
    -> PropertyMapping(FileName) => #43
    #40, #43 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_ManualRewardB_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

GroupWorkflow Init
    BehaviorSubject<Bonsai.Harp.HarpMessage> Commands => #0
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=Behavior))
    -> PropertyMapping(PortName) => #3
    #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
    -> PublishSubject BehaviorEvents
    -> Bonsai.Harp.GroupByRegister => #6
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/HarpMessages_.bin, Selector="")
    -> PropertyMapping(FileName) => #9
    #6, #9 -> Bonsai.Harp.MessageWriter
      FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/HarpMessages_.bin
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FilterType=Include
      MessageType=Write

    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject HarpTimeSource

    BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCommands => #14
    SubscribeSubject ComPorts
    -> Index(Operand=StringProperty(Value=Soundcard))
    -> PropertyMapping(PortName) => #17
    #14, #17 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11) => #18
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/SoundCardMessages_.bin, Selector="")
    -> PropertyMapping(FileName) => #21
    #18, #21 -> Bonsai.Harp.MessageWriter
      FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/SoundCardMessages_.bin
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FilterType=Include
      MessageType=Event

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\ForagingSettings\Settings_box1.csv, ScanPattern="%s,%s", SkipRows=0)
    -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
    -> Take(Count=1)
    -> AsyncSubject ComPorts

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\PavlovianSetting.csv, ScanPattern="%s,%h", SkipRows=0)
    -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
    -> Take(Count=1)
    -> AsyncSubject Params

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS1

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS2

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS3

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveBigReward

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #42
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> PublishSubject LickVis
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject Lick
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #51
    #42 -> MemberSelector(Selector=Seconds) => #52
    #51, #52 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #54
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior/TS_Lick_.csv, Selector="")
    -> PropertyMapping(FileName) => #57
    #54, #57 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior/TS_Lick_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject BehaviorEvents

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward_Manual

Disable GroupWorkflow "Cameras + Pupil Tracking"
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022720, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=227, Y=111, Width=118, Height=131))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis => #6
    -> Bonsai.Vision.LargestBinaryRegion
    #6 -> Bonsai.Vision.MinimumEnclosingCircle
    -> OrderByDescending(KeySelector=Radius)
    -> SelectMany
        WorkflowInput Source1
        -> Merge
        -> FirstOrDefault
        -> WorkflowOutput
    -> MemberSelector(Selector=Radius)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\PupilTracking_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #1 -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23045802, ColorProcessing=Default)
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\BodyCamera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\BodyCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="")
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

Defer "ITI(Exp+Const)"
    SubscribeSubject ExpDist
    -> Bonsai.Numerics.Distributions.Sample => #1
    ExternalizedMapping(Value(DisplayName=Additional)) => #2
    #1, #2 -> Add(Operand=DoubleProperty(Value=5)) => #3
    -> Bonsai.Scripting.Expressions.ExpressionTransform Convert2Sec
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT14.791S, Period=PT0S)
    -> WorkflowOutput
    #3 -> MulticastSubject ITI
-> SelectMany TrialN+1
    SubscribeSubject TrialN
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialN
    -> WorkflowOutput
-> SelectMany TaskLogic
    SubscribeSubject Dist
    -> Bonsai.Numerics.Distributions.Sample => #1
    -> Bonsai.Scripting.Expressions.ExpressionCondition "1 Reward" => #2
      Expression: it = 1
    Source4=#2 -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward => #7
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "2-10 NoReward"
      Expression: it >= 2 && it <=10
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward => #13
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "11-15 Reward"
      Expression: it >= 11 && it <=15
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward => #19
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "16-20 No Reward"
      Expression: it >= 16 && it <=20
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward => #25
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "21-29 Reward"
      Expression: it >= 21 && it <=29
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward => #31
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "30 No Reward"
      Expression: it =30
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward => #37
    #7, #13, #19, #25, #31, #37 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
    #1 -> MulticastSubject TrialType
-> RepeatCount(Count=600) => #9
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Alt", SuppressRepetitions=false)
-> BooleanProperty(Value=true) => #11
#9, #11 -> TakeUntil
-> DelaySubscription(DueTime=PT5M)

GroupWorkflow FIP_Visualizer
    SubscribeSubject Green
    -> VisualizerMapping => #1
    SubscribeSubject Iso
    -> VisualizerMapping => #3
    SubscribeSubject Red
    -> VisualizerMapping => #5
    #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject Green0
    -> VisualizerMapping => #8
    SubscribeSubject Green1
    -> VisualizerMapping => #10
    SubscribeSubject Iso0
    -> VisualizerMapping => #12
    SubscribeSubject Iso1
    -> VisualizerMapping => #14
    SubscribeSubject Red0
    -> VisualizerMapping => #16
    SubscribeSubject Red1
    -> VisualizerMapping => #18
    #8, #10, #12, #14, #16, #18 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=6, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow Photometry
    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\CameraSerial_Green.csv, ScanPattern=%s, SkipRows=0)
    -> PropertyMapping(SerialNumber)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23235880, ColorProcessing=Default) => #2
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Green => #7
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #9
    #7 -> Bonsai.Vision.RoiActivity => #10
      Regions
        ArrayOfPoint
          Point(X=107, Y=59)
          Point(X=107, Y=62)
          Point(X=106, Y=65)
          Point(X=105, Y=68)
          Point(X=103, Y=70)
          Point(X=101, Y=73)
          Point(X=99, Y=75)
          Point(X=96, Y=76)
          Point(X=94, Y=77)
          Point(X=91, Y=77)
          Point(X=88, Y=77)
          Point(X=86, Y=76)
          Point(X=83, Y=75)
          Point(X=81, Y=73)
          Point(X=79, Y=70)
          Point(X=77, Y=68)
          Point(X=76, Y=65)
          Point(X=75, Y=62)
          Point(X=75, Y=59)
          Point(X=75, Y=55)
          Point(X=76, Y=52)
          Point(X=77, Y=49)
          Point(X=79, Y=47)
          Point(X=81, Y=44)
          Point(X=83, Y=42)
          Point(X=86, Y=41)
          Point(X=88, Y=40)
          Point(X=91, Y=40)
          Point(X=94, Y=40)
          Point(X=96, Y=41)
          Point(X=99, Y=42)
          Point(X=101, Y=44)
          Point(X=103, Y=47)
          Point(X=105, Y=49)
          Point(X=106, Y=52)
          Point(X=107, Y=55)
        ArrayOfPoint
          Point(X=88, Y=117)
          Point(X=88, Y=120)
          Point(X=87, Y=123)
          Point(X=86, Y=125)
          Point(X=84, Y=128)
          Point(X=82, Y=130)
          Point(X=80, Y=132)
          Point(X=77, Y=133)
          Point(X=74, Y=134)
          Point(X=72, Y=134)
          Point(X=69, Y=134)
          Point(X=66, Y=133)
          Point(X=63, Y=132)
          Point(X=61, Y=130)
          Point(X=59, Y=128)
          Point(X=57, Y=125)
          Point(X=56, Y=123)
          Point(X=55, Y=120)
          Point(X=55, Y=117)
          Point(X=55, Y=114)
          Point(X=56, Y=111)
          Point(X=57, Y=109)
          Point(X=59, Y=106)
          Point(X=61, Y=104)
          Point(X=63, Y=102)
          Point(X=66, Y=101)
          Point(X=69, Y=100)
          Point(X=72, Y=100)
          Point(X=74, Y=100)
          Point(X=77, Y=101)
          Point(X=80, Y=102)
          Point(X=82, Y=104)
          Point(X=84, Y=106)
          Point(X=86, Y=109)
          Point(X=87, Y=111)
          Point(X=88, Y=114)
        ArrayOfPoint
          Point(X=141, Y=141)
          Point(X=141, Y=144)
          Point(X=140, Y=146)
          Point(X=139, Y=149)
          Point(X=137, Y=151)
          Point(X=136, Y=153)
          Point(X=133, Y=155)
          Point(X=131, Y=156)
          Point(X=129, Y=157)
          Point(X=126, Y=157)
          Point(X=123, Y=157)
          Point(X=121, Y=156)
          Point(X=119, Y=155)
          Point(X=116, Y=153)
          Point(X=115, Y=151)
          Point(X=113, Y=149)
          Point(X=112, Y=146)
          Point(X=111, Y=144)
          Point(X=111, Y=141)
          Point(X=111, Y=138)
          Point(X=112, Y=136)
          Point(X=113, Y=133)
          Point(X=115, Y=131)
          Point(X=116, Y=129)
          Point(X=118, Y=127)
          Point(X=121, Y=126)
          Point(X=123, Y=125)
          Point(X=126, Y=125)
          Point(X=129, Y=125)
          Point(X=131, Y=126)
          Point(X=133, Y=127)
          Point(X=136, Y=129)
          Point(X=137, Y=131)
          Point(X=139, Y=133)
          Point(X=140, Y=136)
          Point(X=141, Y=138)
        ArrayOfPoint
          Point(X=169, Y=83)
          Point(X=169, Y=86)
          Point(X=168, Y=89)
          Point(X=167, Y=92)
          Point(X=165, Y=94)
          Point(X=163, Y=96)
          Point(X=161, Y=98)
          Point(X=159, Y=99)
          Point(X=156, Y=100)
          Point(X=153, Y=100)
          Point(X=151, Y=100)
          Point(X=148, Y=99)
          Point(X=146, Y=98)
          Point(X=144, Y=96)
          Point(X=142, Y=94)
          Point(X=140, Y=92)
          Point(X=139, Y=89)
          Point(X=138, Y=86)
          Point(X=138, Y=83)
          Point(X=138, Y=80)
          Point(X=139, Y=77)
          Point(X=140, Y=74)
          Point(X=142, Y=72)
          Point(X=144, Y=70)
          Point(X=146, Y=68)
          Point(X=148, Y=67)
          Point(X=151, Y=66)
          Point(X=153, Y=66)
          Point(X=156, Y=66)
          Point(X=159, Y=67)
          Point(X=161, Y=68)
          Point(X=163, Y=70)
          Point(X=165, Y=72)
          Point(X=167, Y=74)
          Point(X=168, Y=77)
          Point(X=169, Y=80)
        ArrayOfPoint(Point(X=0, Y=0), Point(X=28, Y=0), Point(X=28, Y=68), Point(X=0, Y=68))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green0 => #13
    #10 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green1 => #16
    #10 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #18
    #10 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #20
    #10 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #22
    #9, #13, #16, #18, #20, #22 -> Zip => #23
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataG_.csv, Selector="")
    -> PropertyMapping(FileName) => #26
    #23, #26 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/fib/FIP_DataG_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawG_.bin, Selector="")
    -> PropertyMapping(Path) => #30
    #7, #30 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\428-9-A\726649\2024_08_07\/fib/FIP_RawG_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #2 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Iso => #36
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #38
    #36 -> Bonsai.Vision.RoiActivity => #39
      Regions
        ArrayOfPoint
          Point(X=108, Y=58)
          Point(X=108, Y=62)
          Point(X=107, Y=66)
          Point(X=106, Y=69)
          Point(X=104, Y=72)
          Point(X=101, Y=74)
          Point(X=99, Y=76)
          Point(X=96, Y=78)
          Point(X=93, Y=79)
          Point(X=90, Y=79)
          Point(X=86, Y=79)
          Point(X=83, Y=78)
          Point(X=80, Y=76)
          Point(X=78, Y=74)
          Point(X=75, Y=72)
          Point(X=73, Y=69)
          Point(X=72, Y=66)
          Point(X=71, Y=62)
          Point(X=71, Y=58)
          Point(X=71, Y=55)
          Point(X=72, Y=51)
          Point(X=73, Y=48)
          Point(X=75, Y=45)
          Point(X=78, Y=43)
          Point(X=80, Y=41)
          Point(X=83, Y=39)
          Point(X=86, Y=38)
          Point(X=90, Y=38)
          Point(X=93, Y=38)
          Point(X=96, Y=39)
          Point(X=99, Y=41)
          Point(X=101, Y=43)
          Point(X=104, Y=45)
          Point(X=106, Y=48)
          Point(X=107, Y=51)
          Point(X=108, Y=55)
        ArrayOfPoint
          Point(X=88, Y=117)
          Point(X=88, Y=120)
          Point(X=87, Y=124)
          Point(X=86, Y=127)
          Point(X=84, Y=130)
          Point(X=82, Y=132)
          Point(X=80, Y=134)
          Point(X=77, Y=136)
          Point(X=74, Y=137)
          Point(X=71, Y=137)
          Point(X=69, Y=137)
          Point(X=66, Y=136)
          Point(X=63, Y=134)
          Point(X=61, Y=132)
          Point(X=59, Y=130)
          Point(X=57, Y=127)
          Point(X=56, Y=124)
          Point(X=55, Y=120)
          Point(X=55, Y=117)
          Point(X=55, Y=114)
          Point(X=56, Y=110)
          Point(X=57, Y=107)
          Point(X=59, Y=104)
          Point(X=61, Y=102)
          Point(X=63, Y=100)
          Point(X=66, Y=98)
          Point(X=69, Y=97)
          Point(X=71, Y=97)
          Point(X=74, Y=97)
          Point(X=77, Y=98)
          Point(X=80, Y=100)
          Point(X=82, Y=102)
          Point(X=84, Y=104)
          Point(X=86, Y=107)
          Point(X=87, Y=110)
          Point(X=88, Y=114)
        ArrayOfPoint
          Point(X=145, Y=140)
          Point(X=145, Y=144)
          Point(X=144, Y=147)
          Point(X=143, Y=150)
          Point(X=141, Y=153)
          Point(X=139, Y=156)
          Point(X=136, Y=158)
          Point(X=133, Y=160)
          Point(X=130, Y=161)
          Point(X=127, Y=161)
          Point(X=124, Y=161)
          Point(X=121, Y=160)
          Point(X=118, Y=158)
          Point(X=115, Y=156)
          Point(X=113, Y=153)
          Point(X=111, Y=150)
          Point(X=110, Y=147)
          Point(X=109, Y=144)
          Point(X=109, Y=140)
          Point(X=109, Y=136)
          Point(X=110, Y=133)
          Point(X=111, Y=130)
          Point(X=113, Y=127)
          Point(X=115, Y=124)
          Point(X=118, Y=122)
          Point(X=121, Y=120)
          Point(X=124, Y=119)
          Point(X=127, Y=119)
          Point(X=130, Y=119)
          Point(X=133, Y=120)
          Point(X=136, Y=122)
          Point(X=139, Y=124)
          Point(X=141, Y=127)
          Point(X=143, Y=130)
          Point(X=144, Y=133)
          Point(X=145, Y=136)
        ArrayOfPoint
          Point(X=172, Y=85)
          Point(X=172, Y=89)
          Point(X=171, Y=93)
          Point(X=169, Y=96)
          Point(X=168, Y=99)
          Point(X=165, Y=102)
          Point(X=162, Y=104)
          Point(X=159, Y=106)
          Point(X=156, Y=107)
          Point(X=153, Y=107)
          Point(X=150, Y=107)
          Point(X=147, Y=106)
          Point(X=144, Y=104)
          Point(X=141, Y=102)
          Point(X=138, Y=99)
          Point(X=137, Y=96)
          Point(X=135, Y=93)
          Point(X=134, Y=89)
          Point(X=134, Y=85)
          Point(X=134, Y=81)
          Point(X=135, Y=77)
          Point(X=137, Y=74)
          Point(X=138, Y=71)
          Point(X=141, Y=68)
          Point(X=144, Y=66)
          Point(X=147, Y=64)
          Point(X=150, Y=63)
          Point(X=153, Y=63)
          Point(X=156, Y=63)
          Point(X=159, Y=64)
          Point(X=162, Y=66)
          Point(X=165, Y=68)
          Point(X=168, Y=71)
          Point(X=169, Y=74)
          Point(X=171, Y=77)
          Point(X=172, Y=81)
        ArrayOfPoint(Point(X=0, Y=0), Point(X=26, Y=0), Point(X=26, Y=78), Point(X=0, Y=78))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso0 => #42
    #39 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso1 => #45
    #39 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity) => #47
    #39 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #49
    #39 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #51
    #38, #42, #45, #47, #49, #51 -> Zip => #52
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataIso_.csv, Selector="")
    -> PropertyMapping(FileName) => #55
    #52, #55 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/fib/FIP_DataIso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawIso_.bin, Selector="")
    -> PropertyMapping(Path) => #59
    #36, #59 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\428-9-A\726649\2024_08_07\/fib/FIP_RawIso_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\CameraSerial_Red.csv, ScanPattern=%s, SkipRows=0)
    -> PropertyMapping(SerialNumber)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23235876, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #64
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #66
    #64 -> Bonsai.Vision.Flip(Mode=Horizontal)
    -> PublishSubject Red => #68
    -> Bonsai.Vision.RoiActivity => #69
      Regions
        ArrayOfPoint
          Point(X=103, Y=58)
          Point(X=103, Y=62)
          Point(X=102, Y=65)
          Point(X=101, Y=69)
          Point(X=99, Y=71)
          Point(X=97, Y=74)
          Point(X=95, Y=76)
          Point(X=92, Y=78)
          Point(X=89, Y=79)
          Point(X=86, Y=79)
          Point(X=84, Y=79)
          Point(X=81, Y=78)
          Point(X=78, Y=76)
          Point(X=76, Y=74)
          Point(X=74, Y=71)
          Point(X=72, Y=69)
          Point(X=71, Y=65)
          Point(X=70, Y=62)
          Point(X=70, Y=58)
          Point(X=70, Y=54)
          Point(X=71, Y=51)
          Point(X=72, Y=47)
          Point(X=74, Y=45)
          Point(X=76, Y=42)
          Point(X=78, Y=40)
          Point(X=81, Y=38)
          Point(X=84, Y=37)
          Point(X=86, Y=37)
          Point(X=89, Y=37)
          Point(X=92, Y=38)
          Point(X=95, Y=40)
          Point(X=97, Y=42)
          Point(X=99, Y=45)
          Point(X=101, Y=47)
          Point(X=102, Y=51)
          Point(X=103, Y=54)
        ArrayOfPoint
          Point(X=94, Y=116)
          Point(X=94, Y=120)
          Point(X=93, Y=123)
          Point(X=92, Y=126)
          Point(X=90, Y=129)
          Point(X=88, Y=132)
          Point(X=85, Y=134)
          Point(X=82, Y=136)
          Point(X=80, Y=137)
          Point(X=76, Y=137)
          Point(X=73, Y=137)
          Point(X=71, Y=136)
          Point(X=68, Y=134)
          Point(X=65, Y=132)
          Point(X=63, Y=129)
          Point(X=61, Y=126)
          Point(X=60, Y=123)
          Point(X=59, Y=120)
          Point(X=59, Y=116)
          Point(X=59, Y=112)
          Point(X=60, Y=109)
          Point(X=61, Y=106)
          Point(X=63, Y=103)
          Point(X=65, Y=100)
          Point(X=68, Y=98)
          Point(X=71, Y=96)
          Point(X=73, Y=95)
          Point(X=76, Y=95)
          Point(X=80, Y=95)
          Point(X=82, Y=96)
          Point(X=85, Y=98)
          Point(X=88, Y=100)
          Point(X=90, Y=103)
          Point(X=92, Y=106)
          Point(X=93, Y=109)
          Point(X=94, Y=112)
        ArrayOfPoint
          Point(X=151, Y=130)
          Point(X=151, Y=133)
          Point(X=150, Y=137)
          Point(X=149, Y=140)
          Point(X=147, Y=143)
          Point(X=145, Y=145)
          Point(X=143, Y=147)
          Point(X=140, Y=149)
          Point(X=137, Y=150)
          Point(X=134, Y=150)
          Point(X=131, Y=150)
          Point(X=128, Y=149)
          Point(X=125, Y=147)
          Point(X=123, Y=145)
          Point(X=121, Y=143)
          Point(X=119, Y=140)
          Point(X=118, Y=137)
          Point(X=117, Y=133)
          Point(X=117, Y=130)
          Point(X=117, Y=127)
          Point(X=118, Y=123)
          Point(X=119, Y=120)
          Point(X=121, Y=117)
          Point(X=123, Y=115)
          Point(X=125, Y=113)
          Point(X=128, Y=111)
          Point(X=131, Y=110)
          Point(X=134, Y=110)
          Point(X=137, Y=110)
          Point(X=140, Y=111)
          Point(X=143, Y=113)
          Point(X=145, Y=115)
          Point(X=147, Y=117)
          Point(X=149, Y=120)
          Point(X=150, Y=123)
          Point(X=151, Y=127)
        ArrayOfPoint
          Point(X=170, Y=73)
          Point(X=170, Y=76)
          Point(X=169, Y=80)
          Point(X=168, Y=83)
          Point(X=166, Y=86)
          Point(X=163, Y=88)
          Point(X=161, Y=90)
          Point(X=158, Y=92)
          Point(X=155, Y=93)
          Point(X=151, Y=93)
          Point(X=148, Y=93)
          Point(X=145, Y=92)
          Point(X=142, Y=90)
          Point(X=140, Y=88)
          Point(X=137, Y=86)
          Point(X=135, Y=83)
          Point(X=134, Y=80)
          Point(X=133, Y=76)
          Point(X=133, Y=73)
          Point(X=133, Y=70)
          Point(X=134, Y=66)
          Point(X=135, Y=63)
          Point(X=137, Y=60)
          Point(X=140, Y=58)
          Point(X=142, Y=56)
          Point(X=145, Y=54)
          Point(X=148, Y=53)
          Point(X=151, Y=53)
          Point(X=155, Y=53)
          Point(X=158, Y=54)
          Point(X=161, Y=56)
          Point(X=163, Y=58)
          Point(X=166, Y=60)
          Point(X=168, Y=63)
          Point(X=169, Y=66)
          Point(X=170, Y=70)
        ArrayOfPoint(Point(X=1, Y=1), Point(X=31, Y=1), Point(X=31, Y=66), Point(X=1, Y=66))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red0 => #72
    #69 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red1 => #75
    #69 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #77
    #69 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #79
    #69 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #81
    #66, #72, #75, #77, #79, #81 -> Zip => #82
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataR_.csv, Selector="")
    -> PropertyMapping(FileName) => #85
    #82, #85 -> Bonsai.IO.CsvWriter(FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/fib/FIP_DataR_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawR_.bin, Selector="")
    -> PropertyMapping(Path) => #89
    #68, #89 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\428-9-A\726649\2024_08_07\/fib/FIP_RawR_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow HighSpeedVideo
    GroupWorkflow SideCamRight
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=SideCameraRight))
        -> PropertyMapping(SerialNumber)
        -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=22511925, ColorProcessing=Default) => #3
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
        -> MemberSelector(Selector=Seconds) => #6
        #3, #6 -> Zip
        -> PublishSubject SideCameraRightFrames
        #3 -> MemberSelector(Selector=Image)
        -> PublishSubject SideCameraRightImage

        SubscribeSubject SideCameraRightFrames
        -> Bonsai.Harp.CreateTimestamped => #12
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/side_camera_right.csv, Selector="")
        -> PropertyMapping(FileName) => #15
        #12, #15 -> Bonsai.IO.CsvWriter
          FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior-videos/side_camera_right.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=false
          Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
        -> MemberSelector(Selector=Value.Image) => #17
        Disable SubscribeSubject RootPath
        -> Disable Format(Format={0}/behavior-videos/side_camera_right.avi, Selector="")
        -> Disable PropertyMapping(FileName) => #20
        Disable IntProperty(Value=120)
        -> Disable PropertyMapping(FrameRate) => #22
        Disable SubscribeSubject ComPorts
        -> Disable Index(Operand=StringProperty(Value=codec))
        -> Disable PropertyMapping(OutputArguments) => #25
        #17, #20, #22, #25 -> Disable Bonsai.FFmpeg.VideoWriter
          FileName=C:\behavior_data\428-9-A\000003\2024_06_16\/behavior-videos/side_camera_right.avi
          Suffix=Timestamp
          Overwrite=true
          FrameRate=120
          OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/side_camera_right.avi, Selector="")
        -> PropertyMapping(FileName) => #29
        #17, #29 -> Bonsai.Vision.VideoWriter
          FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior-videos/side_camera_right.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=120
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor

    GroupWorkflow BottomCam
        SubscribeSubject ComPorts
        -> Index(Operand=StringProperty(Value=BottomCamera))
        -> PropertyMapping(SerialNumber)
        -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022715, ColorProcessing=Default) => #3
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
        -> MemberSelector(Selector=Seconds) => #6
        #3, #6 -> Zip
        -> PublishSubject BottomCameraFrames
        #3 -> MemberSelector(Selector=Image)
        -> PublishSubject BottomCameraImage

        SubscribeSubject BottomCameraFrames
        -> Bonsai.Harp.CreateTimestamped => #12
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/bottom_camera.csv, Selector="")
        -> PropertyMapping(FileName) => #15
        #12, #15 -> Bonsai.IO.CsvWriter
          FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior-videos/bottom_camera.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=false
          Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
        -> MemberSelector(Selector=Value.Image) => #17
        SubscribeSubject RootPath
        -> Format(Format={0}/behavior-videos/bottom_camera.avi, Selector="")
        -> PropertyMapping(FileName) => #20
        #17, #20 -> Bonsai.Vision.VideoWriter
          FileName=C:\behavior_data\428-9-A\726649\2024_08_07\/behavior-videos/bottom_camera.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=120
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        Disable SubscribeSubject RootPath
        -> Disable Format(Format={0}/behavior-videos/bottom_camera.avi, Selector="")
        -> Disable PropertyMapping(FileName) => #24
        Disable IntProperty(Value=120)
        -> Disable PropertyMapping(FrameRate) => #26
        Disable SubscribeSubject ComPorts
        -> Disable Index(Operand=StringProperty(Value=codec))
        -> Disable PropertyMapping(OutputArguments) => #29
        #17, #24, #26, #29 -> Disable Bonsai.FFmpeg.VideoWriter
          FileName=C:\behavior_data\428-9-A\000003\2024_06_16\/behavior-videos/bottom_camera.avi
          Suffix=Timestamp
          Overwrite=true
          FrameRate=120
          OutputArguments="-vcodec h264_nvenc -crf 23 -preset fast -b:v 50M"

    IntProperty(Value=120)
    -> PropertyMapping(Camera1Frequency)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera1FrequencyPayload(Camera1Frequency=120))
    -> MulticastSubject Commands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1))
    -> Delay(DueTime=PT2S)
    -> MulticastSubject Commands

    SubscribeSubject SideCameraRightImage
    -> VisualizerMapping => #10
    SubscribeSubject BottomCameraImage
    -> VisualizerMapping => #12
    #10, #12 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

StringProperty(Value=726649\2024_08_07)
-> Format(Format=C:\behavior_data\428-9-A\{0}\)
-> BehaviorSubject RootPath
