WorkflowBuilder(Version=2.8.0)
GroupWorkflow Photometry
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23235878, ColorProcessing=Default) => #0
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #4
    -> PublishSubject GreenROI => #5
    -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=64, Y=117, Width=88, Height=98))
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #8
    #5 -> Bonsai.Vision.RoiActivity => #9
      Regions
        ArrayOfPoint
          Point(X=79, Y=79)
          Point(X=79, Y=80)
          Point(X=79, Y=82)
          Point(X=78, Y=83)
          Point(X=77, Y=85)
          Point(X=76, Y=86)
          Point(X=75, Y=87)
          Point(X=74, Y=87)
          Point(X=73, Y=88)
          Point(X=72, Y=88)
          Point(X=70, Y=88)
          Point(X=69, Y=87)
          Point(X=68, Y=87)
          Point(X=67, Y=86)
          Point(X=66, Y=85)
          Point(X=65, Y=83)
          Point(X=64, Y=82)
          Point(X=64, Y=80)
          Point(X=64, Y=79)
          Point(X=64, Y=77)
          Point(X=64, Y=75)
          Point(X=65, Y=74)
          Point(X=66, Y=72)
          Point(X=67, Y=71)
          Point(X=68, Y=70)
          Point(X=69, Y=70)
          Point(X=70, Y=69)
          Point(X=72, Y=69)
          Point(X=73, Y=69)
          Point(X=74, Y=70)
          Point(X=75, Y=70)
          Point(X=76, Y=71)
          Point(X=77, Y=72)
          Point(X=78, Y=74)
          Point(X=79, Y=75)
          Point(X=79, Y=77)
        ArrayOfPoint
          Point(X=48, Y=67)
          Point(X=48, Y=69)
          Point(X=48, Y=70)
          Point(X=47, Y=72)
          Point(X=46, Y=73)
          Point(X=45, Y=75)
          Point(X=44, Y=76)
          Point(X=43, Y=76)
          Point(X=42, Y=77)
          Point(X=41, Y=77)
          Point(X=39, Y=77)
          Point(X=38, Y=76)
          Point(X=37, Y=76)
          Point(X=36, Y=75)
          Point(X=35, Y=73)
          Point(X=34, Y=72)
          Point(X=33, Y=70)
          Point(X=33, Y=69)
          Point(X=33, Y=67)
          Point(X=33, Y=65)
          Point(X=33, Y=64)
          Point(X=34, Y=62)
          Point(X=35, Y=61)
          Point(X=36, Y=59)
          Point(X=37, Y=58)
          Point(X=38, Y=58)
          Point(X=39, Y=57)
          Point(X=41, Y=57)
          Point(X=42, Y=57)
          Point(X=43, Y=58)
          Point(X=44, Y=58)
          Point(X=45, Y=59)
          Point(X=46, Y=61)
          Point(X=47, Y=62)
          Point(X=48, Y=64)
          Point(X=48, Y=65)
        ArrayOfPoint
          Point(X=55, Y=36)
          Point(X=55, Y=38)
          Point(X=54, Y=40)
          Point(X=54, Y=41)
          Point(X=53, Y=43)
          Point(X=52, Y=44)
          Point(X=51, Y=45)
          Point(X=49, Y=45)
          Point(X=48, Y=46)
          Point(X=46, Y=46)
          Point(X=45, Y=46)
          Point(X=44, Y=45)
          Point(X=42, Y=45)
          Point(X=41, Y=44)
          Point(X=40, Y=43)
          Point(X=39, Y=41)
          Point(X=39, Y=40)
          Point(X=38, Y=38)
          Point(X=38, Y=36)
          Point(X=38, Y=35)
          Point(X=39, Y=33)
          Point(X=39, Y=32)
          Point(X=40, Y=30)
          Point(X=41, Y=29)
          Point(X=42, Y=28)
          Point(X=44, Y=28)
          Point(X=45, Y=27)
          Point(X=46, Y=27)
          Point(X=48, Y=27)
          Point(X=49, Y=28)
          Point(X=51, Y=28)
          Point(X=52, Y=29)
          Point(X=53, Y=30)
          Point(X=54, Y=32)
          Point(X=54, Y=33)
          Point(X=55, Y=35)
        ArrayOfPoint
          Point(X=94, Y=50)
          Point(X=94, Y=52)
          Point(X=93, Y=53)
          Point(X=93, Y=55)
          Point(X=92, Y=56)
          Point(X=91, Y=58)
          Point(X=89, Y=59)
          Point(X=88, Y=59)
          Point(X=86, Y=60)
          Point(X=85, Y=60)
          Point(X=83, Y=60)
          Point(X=81, Y=59)
          Point(X=80, Y=59)
          Point(X=78, Y=58)
          Point(X=77, Y=56)
          Point(X=76, Y=55)
          Point(X=76, Y=53)
          Point(X=75, Y=52)
          Point(X=75, Y=50)
          Point(X=75, Y=48)
          Point(X=76, Y=47)
          Point(X=76, Y=45)
          Point(X=77, Y=44)
          Point(X=78, Y=42)
          Point(X=80, Y=41)
          Point(X=81, Y=41)
          Point(X=83, Y=40)
          Point(X=85, Y=40)
          Point(X=86, Y=40)
          Point(X=88, Y=41)
          Point(X=89, Y=41)
          Point(X=91, Y=42)
          Point(X=92, Y=44)
          Point(X=93, Y=45)
          Point(X=93, Y=47)
          Point(X=94, Y=48)
        ArrayOfPoint(Point(X=0, Y=1), Point(X=18, Y=1), Point(X=18, Y=37), Point(X=0, Y=37))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green1 => #12
    #9 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green2 => #15
    #9 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #17
    #9 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #19
    #9 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #21
    #8, #12, #15, #17, #19, #21 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Signal_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #4 -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Signal_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #28
    -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Iso_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #28 -> PublishSubject IsoROI => #30
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #32
    #30 -> Bonsai.Vision.RoiActivity => #33
      Regions
        ArrayOfPoint
          Point(X=78, Y=81)
          Point(X=78, Y=83)
          Point(X=78, Y=84)
          Point(X=77, Y=85)
          Point(X=76, Y=87)
          Point(X=75, Y=88)
          Point(X=74, Y=89)
          Point(X=73, Y=89)
          Point(X=72, Y=90)
          Point(X=71, Y=90)
          Point(X=70, Y=90)
          Point(X=69, Y=89)
          Point(X=68, Y=89)
          Point(X=67, Y=88)
          Point(X=66, Y=87)
          Point(X=65, Y=85)
          Point(X=64, Y=84)
          Point(X=64, Y=83)
          Point(X=64, Y=81)
          Point(X=64, Y=79)
          Point(X=64, Y=78)
          Point(X=65, Y=77)
          Point(X=66, Y=75)
          Point(X=67, Y=74)
          Point(X=68, Y=73)
          Point(X=69, Y=73)
          Point(X=70, Y=72)
          Point(X=71, Y=72)
          Point(X=72, Y=72)
          Point(X=73, Y=73)
          Point(X=74, Y=73)
          Point(X=75, Y=74)
          Point(X=76, Y=75)
          Point(X=77, Y=77)
          Point(X=78, Y=78)
          Point(X=78, Y=79)
        ArrayOfPoint
          Point(X=48, Y=68)
          Point(X=48, Y=69)
          Point(X=48, Y=71)
          Point(X=47, Y=72)
          Point(X=46, Y=74)
          Point(X=45, Y=75)
          Point(X=44, Y=76)
          Point(X=43, Y=76)
          Point(X=42, Y=77)
          Point(X=41, Y=77)
          Point(X=39, Y=77)
          Point(X=38, Y=76)
          Point(X=37, Y=76)
          Point(X=36, Y=75)
          Point(X=35, Y=74)
          Point(X=34, Y=72)
          Point(X=33, Y=71)
          Point(X=33, Y=69)
          Point(X=33, Y=68)
          Point(X=33, Y=66)
          Point(X=33, Y=64)
          Point(X=34, Y=63)
          Point(X=35, Y=61)
          Point(X=36, Y=60)
          Point(X=37, Y=59)
          Point(X=38, Y=59)
          Point(X=39, Y=58)
          Point(X=41, Y=58)
          Point(X=42, Y=58)
          Point(X=43, Y=59)
          Point(X=44, Y=59)
          Point(X=45, Y=60)
          Point(X=46, Y=61)
          Point(X=47, Y=63)
          Point(X=48, Y=64)
          Point(X=48, Y=66)
        ArrayOfPoint
          Point(X=54, Y=35)
          Point(X=54, Y=37)
          Point(X=53, Y=39)
          Point(X=53, Y=41)
          Point(X=52, Y=42)
          Point(X=51, Y=44)
          Point(X=50, Y=45)
          Point(X=48, Y=45)
          Point(X=47, Y=46)
          Point(X=46, Y=46)
          Point(X=44, Y=46)
          Point(X=43, Y=45)
          Point(X=41, Y=45)
          Point(X=40, Y=44)
          Point(X=39, Y=42)
          Point(X=38, Y=41)
          Point(X=38, Y=39)
          Point(X=37, Y=37)
          Point(X=37, Y=35)
          Point(X=37, Y=34)
          Point(X=38, Y=32)
          Point(X=38, Y=30)
          Point(X=39, Y=29)
          Point(X=40, Y=27)
          Point(X=41, Y=26)
          Point(X=43, Y=26)
          Point(X=44, Y=25)
          Point(X=46, Y=25)
          Point(X=47, Y=25)
          Point(X=48, Y=26)
          Point(X=50, Y=26)
          Point(X=51, Y=27)
          Point(X=52, Y=29)
          Point(X=53, Y=30)
          Point(X=53, Y=32)
          Point(X=54, Y=34)
        ArrayOfPoint
          Point(X=92, Y=49)
          Point(X=92, Y=51)
          Point(X=92, Y=53)
          Point(X=91, Y=55)
          Point(X=90, Y=56)
          Point(X=89, Y=58)
          Point(X=88, Y=59)
          Point(X=87, Y=59)
          Point(X=85, Y=60)
          Point(X=84, Y=60)
          Point(X=83, Y=60)
          Point(X=81, Y=59)
          Point(X=80, Y=59)
          Point(X=79, Y=58)
          Point(X=78, Y=56)
          Point(X=77, Y=55)
          Point(X=76, Y=53)
          Point(X=76, Y=51)
          Point(X=76, Y=49)
          Point(X=76, Y=48)
          Point(X=76, Y=46)
          Point(X=77, Y=44)
          Point(X=78, Y=43)
          Point(X=79, Y=41)
          Point(X=80, Y=40)
          Point(X=81, Y=40)
          Point(X=83, Y=39)
          Point(X=84, Y=39)
          Point(X=85, Y=39)
          Point(X=87, Y=40)
          Point(X=88, Y=40)
          Point(X=89, Y=41)
          Point(X=90, Y=43)
          Point(X=91, Y=44)
          Point(X=92, Y=46)
          Point(X=92, Y=48)
        ArrayOfPoint(Point(X=0, Y=2), Point(X=15, Y=2), Point(X=15, Y=47), Point(X=0, Y=47))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso1 => #36
    #33 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso2 => #39
    #33 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #41
    #33 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #43
    #33 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #45
    #32, #36, #39, #41, #43, #45 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Iso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #0 -> Skip(Count=2)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #51
    -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Stim_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #51 -> PublishSubject RedROI => #53
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #55
    #53 -> Bonsai.Vision.RoiActivity => #56
      Regions
        ArrayOfPoint
          Point(X=77, Y=82)
          Point(X=77, Y=84)
          Point(X=76, Y=85)
          Point(X=76, Y=87)
          Point(X=75, Y=88)
          Point(X=74, Y=90)
          Point(X=73, Y=91)
          Point(X=71, Y=91)
          Point(X=70, Y=92)
          Point(X=68, Y=92)
          Point(X=66, Y=92)
          Point(X=65, Y=91)
          Point(X=63, Y=91)
          Point(X=62, Y=90)
          Point(X=61, Y=88)
          Point(X=60, Y=87)
          Point(X=60, Y=85)
          Point(X=59, Y=84)
          Point(X=59, Y=82)
          Point(X=59, Y=80)
          Point(X=60, Y=79)
          Point(X=60, Y=77)
          Point(X=61, Y=76)
          Point(X=62, Y=74)
          Point(X=63, Y=73)
          Point(X=65, Y=73)
          Point(X=66, Y=72)
          Point(X=68, Y=72)
          Point(X=70, Y=72)
          Point(X=71, Y=73)
          Point(X=72, Y=73)
          Point(X=74, Y=74)
          Point(X=75, Y=76)
          Point(X=76, Y=77)
          Point(X=76, Y=79)
          Point(X=77, Y=80)
        ArrayOfPoint
          Point(X=48, Y=67)
          Point(X=48, Y=69)
          Point(X=47, Y=70)
          Point(X=47, Y=72)
          Point(X=46, Y=73)
          Point(X=45, Y=75)
          Point(X=43, Y=76)
          Point(X=42, Y=76)
          Point(X=40, Y=77)
          Point(X=38, Y=77)
          Point(X=37, Y=77)
          Point(X=35, Y=76)
          Point(X=34, Y=76)
          Point(X=32, Y=75)
          Point(X=31, Y=73)
          Point(X=30, Y=72)
          Point(X=30, Y=70)
          Point(X=29, Y=69)
          Point(X=29, Y=67)
          Point(X=29, Y=65)
          Point(X=30, Y=64)
          Point(X=30, Y=62)
          Point(X=31, Y=61)
          Point(X=32, Y=59)
          Point(X=34, Y=58)
          Point(X=35, Y=58)
          Point(X=37, Y=57)
          Point(X=38, Y=57)
          Point(X=40, Y=57)
          Point(X=42, Y=58)
          Point(X=43, Y=58)
          Point(X=45, Y=59)
          Point(X=46, Y=61)
          Point(X=47, Y=62)
          Point(X=47, Y=64)
          Point(X=48, Y=65)
        ArrayOfPoint
          Point(X=55, Y=35)
          Point(X=55, Y=37)
          Point(X=54, Y=38)
          Point(X=54, Y=40)
          Point(X=53, Y=41)
          Point(X=52, Y=42)
          Point(X=50, Y=43)
          Point(X=49, Y=43)
          Point(X=48, Y=44)
          Point(X=46, Y=44)
          Point(X=44, Y=44)
          Point(X=43, Y=43)
          Point(X=42, Y=43)
          Point(X=40, Y=42)
          Point(X=39, Y=41)
          Point(X=38, Y=40)
          Point(X=38, Y=38)
          Point(X=37, Y=37)
          Point(X=37, Y=35)
          Point(X=37, Y=33)
          Point(X=38, Y=32)
          Point(X=38, Y=30)
          Point(X=39, Y=29)
          Point(X=40, Y=28)
          Point(X=42, Y=27)
          Point(X=43, Y=27)
          Point(X=44, Y=26)
          Point(X=46, Y=26)
          Point(X=48, Y=26)
          Point(X=49, Y=27)
          Point(X=50, Y=27)
          Point(X=52, Y=28)
          Point(X=53, Y=29)
          Point(X=54, Y=30)
          Point(X=54, Y=32)
          Point(X=55, Y=33)
        ArrayOfPoint
          Point(X=91, Y=50)
          Point(X=91, Y=52)
          Point(X=90, Y=53)
          Point(X=90, Y=55)
          Point(X=89, Y=56)
          Point(X=88, Y=58)
          Point(X=86, Y=59)
          Point(X=85, Y=59)
          Point(X=83, Y=60)
          Point(X=82, Y=60)
          Point(X=80, Y=60)
          Point(X=78, Y=59)
          Point(X=77, Y=59)
          Point(X=75, Y=58)
          Point(X=74, Y=56)
          Point(X=73, Y=55)
          Point(X=73, Y=53)
          Point(X=72, Y=52)
          Point(X=72, Y=50)
          Point(X=72, Y=48)
          Point(X=73, Y=47)
          Point(X=73, Y=45)
          Point(X=74, Y=44)
          Point(X=75, Y=42)
          Point(X=77, Y=41)
          Point(X=78, Y=41)
          Point(X=80, Y=40)
          Point(X=82, Y=40)
          Point(X=83, Y=40)
          Point(X=85, Y=41)
          Point(X=86, Y=41)
          Point(X=88, Y=42)
          Point(X=89, Y=44)
          Point(X=90, Y=45)
          Point(X=90, Y=47)
          Point(X=91, Y=48)
        ArrayOfPoint(Point(X=0, Y=0), Point(X=13, Y=0), Point(X=13, Y=34), Point(X=0, Y=34))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red1 => #59
    #56 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red2 => #62
    #56 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #64
    #56 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #66
    #56 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #68
    #55, #59, #62, #64, #66, #68 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Stim_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow Visualizer
    SubscribeSubject GreenROI
    -> VisualizerMapping => #1
    SubscribeSubject IsoROI
    -> VisualizerMapping => #3
    SubscribeSubject RedROI
    -> VisualizerMapping => #5
    #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject Green1
    -> VisualizerMapping => #8
    SubscribeSubject Green2
    -> VisualizerMapping => #10
    SubscribeSubject Iso1
    -> VisualizerMapping => #12
    SubscribeSubject Iso2
    -> VisualizerMapping => #14
    SubscribeSubject Red1
    -> VisualizerMapping => #16
    SubscribeSubject Red2
    -> VisualizerMapping => #18
    #8, #10, #12, #14, #16, #18 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=6, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow "ManualControl "
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\B_ManualWater_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown
      Filter="LButton RButton Cancel MButton XButton1 XButton2 Back Tab LineFeed Clear Return Enter A B C D E F G H I J K L M N O Alt"
      SuppressRepetitions=false
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=400))
    -> MulticastSubject SoundCommands
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\B_ManualTone_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Disable Bonsai.Windows.Input.KeyDown
      Filter="LButton RButton Cancel MButton XButton1 XButton2 Back Tab LineFeed Clear Return Enter A B C D E F G H I J K L M N O Alt"
      SuppressRepetitions=false
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Led) => #15
    -> Disable MulticastSubject Commands
    -> Disable Delay(DueTime=PT0.01S)
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Led)
    -> Disable MulticastSubject Commands
    #15 -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Disable Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\B_ManualTone_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow BehaviorLogic
    Bonsai.Numerics.CreateRandom(Seed=1)
    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.2)
    -> AsyncSubject ExpDist

    BehaviorSubject<Bonsai.Harp.HarpMessage> Commands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
    -> Bonsai.Harp.GroupByRegister
    -> Bonsai.Harp.MessageWriter(FileName=C:\FiberPhotmetry\output_temp\HarpMessages_.bin, Suffix=Timestamp, Buffered=true, Overwrite=false, FilterType=Include, MessageType=Write)

    IntProperty(Value=10)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands

    BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCommands
    -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM7)
    -> Bonsai.Harp.MessageWriter(FileName=C:\FiberPhotmetry\output_temp\SoundCardMessages_, Suffix=Timestamp, Buffered=true, Overwrite=false, FilterType=Include, MessageType=Event)

    Defer "ITI(Exp+Const)"
        SubscribeSubject ExpDist
        -> Bonsai.Numerics.Distributions.Sample => #1
        ExternalizedMapping(Value(DisplayName=Additional)) => #2
        #1, #2 -> Add(Operand=DoubleProperty(Value=5))
        -> Bonsai.Scripting.Expressions.ExpressionTransform Convert2Sec
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT15.501S, Period=PT0S)
        -> WorkflowOutput
    -> SelectMany CSUS_mainlogic
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Led) => #1
        -> MulticastSubject Commands
        -> Delay(DueTime=PT0.01S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Led)
        -> MulticastSubject Commands
        #0 -> Delay(DueTime=PT2S) => #6
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Led)
        -> MulticastSubject Commands
        -> Delay(DueTime=PT0.1S)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke0Led)
        -> MulticastSubject Commands
        -> Take(Count=1)
        -> WorkflowOutput
        #6 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve) => #14
        -> MulticastSubject Commands
        #1 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #17
        #14 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
        #17, #19 -> Zip
        -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\B_CSUS_.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    -> RepeatCount(Count=100)
    -> DelaySubscription(DueTime=PT5M)
