WorkflowBuilder(Version=2.8.0)
GroupWorkflow RandGen
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject Rng

    SubscribeSubject Rng
    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.2)
    -> AsyncSubject ExpDist

    SubscribeSubject Rng
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=30)
    -> AsyncSubject Dist

GroupWorkflow CSUS_Action
    SubscribeSubject GiveReward
    -> MulticastSubject GiveRewardCopy
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject GiveReward_Manual
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #2, #4 -> Merge
    -> IntProperty(Value=10)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #12
    SubscribeSubject HarpTimeSource => #13
    #13, #12 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> MemberSelector(Selector=Seconds) => #16
    #12, #16 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_Reward_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject GiveBigReward
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=20)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #28
    SubscribeSubject HarpTimeSource => #29
    #29, #28 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> MemberSelector(Selector=Seconds) => #32
    #28, #32 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_RewardB_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject PlayCS1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=300))
    -> MulticastSubject SoundCommands
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_CS1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject PlayCS2
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=300))
    -> MulticastSubject SoundCommands
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=3))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_CS2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject PlayCS3
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=300))
    -> MulticastSubject SoundCommands
    -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=4))
    -> MulticastSubject SoundCommands
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_CS3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow TrialN_Type_log
    IntProperty(Value=0)
    -> BehaviorSubject TrialN

    IntProperty(Value=0)
    -> BehaviorSubject TrialType

    FloatProperty(Value=0)
    -> BehaviorSubject ITI

    IntProperty(Value=0)
    -> BehaviorSubject TotalReward

    SubscribeSubject TrialN => #8
    SubscribeSubject TrialType => #9
    BehaviorSubject<System.Boolean> GiveRewardCopy => #10
    -> Bonsai.Scripting.Expressions.ExpressionCondition Add+1
      Expression: it == True
    -> SelectMany RewardCount => #12
        SubscribeSubject TotalReward
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TotalReward
        -> WorkflowOutput
    #10 -> Bonsai.Scripting.Expressions.ExpressionCondition Add+0
      Expression: it == False
    -> SelectMany RewardCount => #14
        SubscribeSubject TotalReward
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=0))
        -> MulticastSubject TotalReward
        -> WorkflowOutput
    #12, #14 -> Merge => #15
    SubscribeSubject ITI => #16
    #8, #9, #10, #15, #16 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Trial#+TrialType
      Expression:
        new(
        Item1 as TrialNumber,
        Item2 as TrialType,
        Item3 as Reward,
        Item4 as TotalRewards,
        Item5 as ITI_s)
    -> Bonsai.IO.WriteLine
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TrialN_TrialType_ITI_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

GroupWorkflow Manual_CSUS
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_ManualCS1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_ManualCS2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_ManualCS3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward_Manual
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_ManualReward_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Windows.Input.KeyDown(Filter="RButton B Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveBigReward
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_ManualRewardB_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow Init
    BehaviorSubject<Bonsai.Harp.HarpMessage> Commands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM5)
    -> PublishSubject BehaviorEvents
    -> Bonsai.Harp.GroupByRegister
    -> Bonsai.Harp.MessageWriter(FileName=C:\FiberPhotmetry\output_temp\HarpMessages_.bin, Suffix=Timestamp, Buffered=true, Overwrite=false, FilterType=Include, MessageType=Write)

    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject HarpTimeSource

    BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCommands
    -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM7)
    -> Bonsai.Harp.MessageWriter(FileName=C:\FiberPhotmetry\output_temp\SoundCardMessages_, Suffix=Timestamp, Buffered=true, Overwrite=false, FilterType=Include, MessageType=Event)

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS1

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS2

    BooleanProperty(Value=false)
    -> BehaviorSubject PlayCS3

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveBigReward

    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
    -> PublishSubject Lick
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #25
    SubscribeSubject HarpTimeSource => #26
    #26, #25 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> MemberSelector(Selector=Seconds) => #29
    #25, #29 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        New(
        Item1 as SoftwareTS,
        Item2 as HarpTS)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\TS_Lick_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    BooleanProperty(Value=false)
    -> BehaviorSubject GiveReward_Manual

GroupWorkflow Photometry
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23235878, ColorProcessing=Default) => #0
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #4
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #6
    #4 -> Bonsai.Vision.RoiActivity => #7
      Regions
        ArrayOfPoint
          Point(X=71, Y=71)
          Point(X=71, Y=72)
          Point(X=71, Y=74)
          Point(X=70, Y=75)
          Point(X=69, Y=77)
          Point(X=68, Y=78)
          Point(X=67, Y=79)
          Point(X=66, Y=79)
          Point(X=65, Y=80)
          Point(X=64, Y=80)
          Point(X=62, Y=80)
          Point(X=61, Y=79)
          Point(X=60, Y=79)
          Point(X=59, Y=78)
          Point(X=58, Y=77)
          Point(X=57, Y=75)
          Point(X=56, Y=74)
          Point(X=56, Y=72)
          Point(X=56, Y=71)
          Point(X=56, Y=69)
          Point(X=56, Y=67)
          Point(X=57, Y=66)
          Point(X=58, Y=64)
          Point(X=59, Y=63)
          Point(X=60, Y=62)
          Point(X=61, Y=62)
          Point(X=62, Y=61)
          Point(X=64, Y=61)
          Point(X=65, Y=61)
          Point(X=66, Y=62)
          Point(X=67, Y=62)
          Point(X=68, Y=63)
          Point(X=69, Y=64)
          Point(X=70, Y=66)
          Point(X=71, Y=67)
          Point(X=71, Y=69)
        ArrayOfPoint
          Point(X=39, Y=58)
          Point(X=39, Y=60)
          Point(X=39, Y=61)
          Point(X=38, Y=63)
          Point(X=37, Y=64)
          Point(X=36, Y=66)
          Point(X=35, Y=67)
          Point(X=34, Y=67)
          Point(X=33, Y=68)
          Point(X=32, Y=68)
          Point(X=30, Y=68)
          Point(X=29, Y=67)
          Point(X=28, Y=67)
          Point(X=27, Y=66)
          Point(X=26, Y=64)
          Point(X=25, Y=63)
          Point(X=24, Y=61)
          Point(X=24, Y=60)
          Point(X=24, Y=58)
          Point(X=24, Y=56)
          Point(X=24, Y=55)
          Point(X=25, Y=53)
          Point(X=26, Y=52)
          Point(X=27, Y=50)
          Point(X=28, Y=49)
          Point(X=29, Y=49)
          Point(X=30, Y=48)
          Point(X=32, Y=48)
          Point(X=33, Y=48)
          Point(X=34, Y=49)
          Point(X=35, Y=49)
          Point(X=36, Y=50)
          Point(X=37, Y=52)
          Point(X=38, Y=53)
          Point(X=39, Y=55)
          Point(X=39, Y=56)
        ArrayOfPoint
          Point(X=45, Y=27)
          Point(X=45, Y=29)
          Point(X=44, Y=31)
          Point(X=44, Y=32)
          Point(X=43, Y=34)
          Point(X=42, Y=35)
          Point(X=41, Y=36)
          Point(X=39, Y=36)
          Point(X=38, Y=37)
          Point(X=36, Y=37)
          Point(X=35, Y=37)
          Point(X=34, Y=36)
          Point(X=32, Y=36)
          Point(X=31, Y=35)
          Point(X=30, Y=34)
          Point(X=29, Y=32)
          Point(X=29, Y=31)
          Point(X=28, Y=29)
          Point(X=28, Y=27)
          Point(X=28, Y=26)
          Point(X=29, Y=24)
          Point(X=29, Y=23)
          Point(X=30, Y=21)
          Point(X=31, Y=20)
          Point(X=32, Y=19)
          Point(X=34, Y=19)
          Point(X=35, Y=18)
          Point(X=36, Y=18)
          Point(X=38, Y=18)
          Point(X=39, Y=19)
          Point(X=41, Y=19)
          Point(X=42, Y=20)
          Point(X=43, Y=21)
          Point(X=44, Y=23)
          Point(X=44, Y=24)
          Point(X=45, Y=26)
        ArrayOfPoint
          Point(X=84, Y=40)
          Point(X=84, Y=42)
          Point(X=83, Y=43)
          Point(X=83, Y=45)
          Point(X=82, Y=46)
          Point(X=81, Y=48)
          Point(X=79, Y=49)
          Point(X=78, Y=49)
          Point(X=76, Y=50)
          Point(X=75, Y=50)
          Point(X=73, Y=50)
          Point(X=71, Y=49)
          Point(X=70, Y=49)
          Point(X=68, Y=48)
          Point(X=67, Y=46)
          Point(X=66, Y=45)
          Point(X=66, Y=43)
          Point(X=65, Y=42)
          Point(X=65, Y=40)
          Point(X=65, Y=38)
          Point(X=66, Y=37)
          Point(X=66, Y=35)
          Point(X=67, Y=34)
          Point(X=68, Y=32)
          Point(X=70, Y=31)
          Point(X=71, Y=31)
          Point(X=73, Y=30)
          Point(X=75, Y=30)
          Point(X=76, Y=30)
          Point(X=78, Y=31)
          Point(X=79, Y=31)
          Point(X=81, Y=32)
          Point(X=82, Y=34)
          Point(X=83, Y=35)
          Point(X=83, Y=37)
          Point(X=84, Y=38)
        ArrayOfPoint(Point(X=0, Y=1), Point(X=18, Y=1), Point(X=18, Y=37), Point(X=0, Y=37))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0) => #9
    #7 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0) => #11
    #7 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #13
    #7 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #15
    #7 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #17
    #6, #9, #11, #13, #15, #17 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Signal_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #4 -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Signal_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #24
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #26
    #24 -> Bonsai.Vision.RoiActivity => #27
      Regions
        ArrayOfPoint
          Point(X=71, Y=70)
          Point(X=71, Y=72)
          Point(X=71, Y=74)
          Point(X=70, Y=75)
          Point(X=69, Y=77)
          Point(X=68, Y=78)
          Point(X=67, Y=79)
          Point(X=66, Y=79)
          Point(X=64, Y=80)
          Point(X=63, Y=80)
          Point(X=62, Y=80)
          Point(X=60, Y=79)
          Point(X=59, Y=79)
          Point(X=58, Y=78)
          Point(X=57, Y=77)
          Point(X=56, Y=75)
          Point(X=55, Y=74)
          Point(X=55, Y=72)
          Point(X=55, Y=70)
          Point(X=55, Y=69)
          Point(X=55, Y=67)
          Point(X=56, Y=66)
          Point(X=57, Y=64)
          Point(X=58, Y=63)
          Point(X=59, Y=62)
          Point(X=60, Y=62)
          Point(X=62, Y=61)
          Point(X=63, Y=61)
          Point(X=64, Y=61)
          Point(X=66, Y=62)
          Point(X=67, Y=62)
          Point(X=68, Y=63)
          Point(X=69, Y=64)
          Point(X=70, Y=66)
          Point(X=71, Y=67)
          Point(X=71, Y=69)
        ArrayOfPoint
          Point(X=39, Y=58)
          Point(X=39, Y=60)
          Point(X=39, Y=61)
          Point(X=38, Y=62)
          Point(X=37, Y=64)
          Point(X=36, Y=65)
          Point(X=35, Y=66)
          Point(X=34, Y=66)
          Point(X=33, Y=67)
          Point(X=31, Y=67)
          Point(X=30, Y=67)
          Point(X=29, Y=66)
          Point(X=28, Y=66)
          Point(X=27, Y=65)
          Point(X=26, Y=64)
          Point(X=25, Y=62)
          Point(X=24, Y=61)
          Point(X=24, Y=60)
          Point(X=24, Y=58)
          Point(X=24, Y=56)
          Point(X=24, Y=55)
          Point(X=25, Y=54)
          Point(X=26, Y=52)
          Point(X=27, Y=51)
          Point(X=28, Y=50)
          Point(X=29, Y=50)
          Point(X=30, Y=49)
          Point(X=31, Y=49)
          Point(X=33, Y=49)
          Point(X=34, Y=50)
          Point(X=35, Y=50)
          Point(X=36, Y=51)
          Point(X=37, Y=52)
          Point(X=38, Y=54)
          Point(X=39, Y=55)
          Point(X=39, Y=56)
        ArrayOfPoint
          Point(X=44, Y=28)
          Point(X=44, Y=29)
          Point(X=43, Y=31)
          Point(X=43, Y=33)
          Point(X=42, Y=35)
          Point(X=41, Y=36)
          Point(X=40, Y=37)
          Point(X=38, Y=38)
          Point(X=37, Y=39)
          Point(X=35, Y=39)
          Point(X=34, Y=39)
          Point(X=33, Y=38)
          Point(X=31, Y=37)
          Point(X=30, Y=36)
          Point(X=29, Y=35)
          Point(X=28, Y=33)
          Point(X=28, Y=31)
          Point(X=27, Y=29)
          Point(X=27, Y=28)
          Point(X=27, Y=26)
          Point(X=28, Y=24)
          Point(X=28, Y=22)
          Point(X=29, Y=20)
          Point(X=30, Y=19)
          Point(X=31, Y=18)
          Point(X=33, Y=17)
          Point(X=34, Y=16)
          Point(X=35, Y=16)
          Point(X=37, Y=16)
          Point(X=38, Y=17)
          Point(X=40, Y=18)
          Point(X=41, Y=19)
          Point(X=42, Y=20)
          Point(X=43, Y=22)
          Point(X=43, Y=24)
          Point(X=44, Y=26)
        ArrayOfPoint
          Point(X=83, Y=40)
          Point(X=83, Y=42)
          Point(X=82, Y=43)
          Point(X=82, Y=45)
          Point(X=81, Y=46)
          Point(X=80, Y=48)
          Point(X=79, Y=49)
          Point(X=77, Y=49)
          Point(X=76, Y=50)
          Point(X=74, Y=50)
          Point(X=73, Y=50)
          Point(X=72, Y=49)
          Point(X=70, Y=49)
          Point(X=69, Y=48)
          Point(X=68, Y=46)
          Point(X=67, Y=45)
          Point(X=67, Y=43)
          Point(X=66, Y=42)
          Point(X=66, Y=40)
          Point(X=66, Y=38)
          Point(X=67, Y=37)
          Point(X=67, Y=35)
          Point(X=68, Y=34)
          Point(X=69, Y=32)
          Point(X=70, Y=31)
          Point(X=72, Y=31)
          Point(X=73, Y=30)
          Point(X=74, Y=30)
          Point(X=76, Y=30)
          Point(X=77, Y=31)
          Point(X=79, Y=31)
          Point(X=80, Y=32)
          Point(X=81, Y=34)
          Point(X=82, Y=35)
          Point(X=82, Y=37)
          Point(X=83, Y=38)
        ArrayOfPoint(Point(X=0, Y=2), Point(X=16, Y=2), Point(X=16, Y=46), Point(X=0, Y=46))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0) => #29
    #27 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0) => #31
    #27 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #33
    #27 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #35
    #27 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #37
    #26, #29, #31, #33, #35, #37 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Iso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #24 -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Iso_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> Skip(Count=2)
    -> BufferCount(Count=1, Skip=3)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image) => #44
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #46
    #44 -> Bonsai.Vision.RoiActivity => #47
      Regions
        ArrayOfPoint
          Point(X=70, Y=70)
          Point(X=70, Y=72)
          Point(X=70, Y=73)
          Point(X=69, Y=74)
          Point(X=68, Y=76)
          Point(X=67, Y=77)
          Point(X=66, Y=78)
          Point(X=65, Y=78)
          Point(X=64, Y=79)
          Point(X=63, Y=79)
          Point(X=62, Y=79)
          Point(X=61, Y=78)
          Point(X=60, Y=78)
          Point(X=59, Y=77)
          Point(X=58, Y=76)
          Point(X=57, Y=74)
          Point(X=56, Y=73)
          Point(X=56, Y=72)
          Point(X=56, Y=70)
          Point(X=56, Y=68)
          Point(X=56, Y=67)
          Point(X=57, Y=66)
          Point(X=58, Y=64)
          Point(X=59, Y=63)
          Point(X=60, Y=62)
          Point(X=61, Y=62)
          Point(X=62, Y=61)
          Point(X=63, Y=61)
          Point(X=64, Y=61)
          Point(X=65, Y=62)
          Point(X=66, Y=62)
          Point(X=67, Y=63)
          Point(X=68, Y=64)
          Point(X=69, Y=66)
          Point(X=70, Y=67)
          Point(X=70, Y=68)
        ArrayOfPoint
          Point(X=39, Y=59)
          Point(X=39, Y=60)
          Point(X=39, Y=62)
          Point(X=38, Y=63)
          Point(X=37, Y=65)
          Point(X=36, Y=66)
          Point(X=35, Y=67)
          Point(X=34, Y=67)
          Point(X=33, Y=68)
          Point(X=32, Y=68)
          Point(X=30, Y=68)
          Point(X=29, Y=67)
          Point(X=28, Y=67)
          Point(X=27, Y=66)
          Point(X=26, Y=65)
          Point(X=25, Y=63)
          Point(X=24, Y=62)
          Point(X=24, Y=60)
          Point(X=24, Y=59)
          Point(X=24, Y=57)
          Point(X=24, Y=55)
          Point(X=25, Y=54)
          Point(X=26, Y=52)
          Point(X=27, Y=51)
          Point(X=28, Y=50)
          Point(X=29, Y=50)
          Point(X=30, Y=49)
          Point(X=32, Y=49)
          Point(X=33, Y=49)
          Point(X=34, Y=50)
          Point(X=35, Y=50)
          Point(X=36, Y=51)
          Point(X=37, Y=52)
          Point(X=38, Y=54)
          Point(X=39, Y=55)
          Point(X=39, Y=57)
        ArrayOfPoint
          Point(X=45, Y=27)
          Point(X=45, Y=29)
          Point(X=44, Y=31)
          Point(X=44, Y=33)
          Point(X=43, Y=34)
          Point(X=42, Y=36)
          Point(X=41, Y=37)
          Point(X=39, Y=37)
          Point(X=38, Y=38)
          Point(X=37, Y=38)
          Point(X=35, Y=38)
          Point(X=34, Y=37)
          Point(X=32, Y=37)
          Point(X=31, Y=36)
          Point(X=30, Y=34)
          Point(X=29, Y=33)
          Point(X=29, Y=31)
          Point(X=28, Y=29)
          Point(X=28, Y=27)
          Point(X=28, Y=26)
          Point(X=29, Y=24)
          Point(X=29, Y=22)
          Point(X=30, Y=21)
          Point(X=31, Y=19)
          Point(X=32, Y=18)
          Point(X=34, Y=18)
          Point(X=35, Y=17)
          Point(X=37, Y=17)
          Point(X=38, Y=17)
          Point(X=39, Y=18)
          Point(X=41, Y=18)
          Point(X=42, Y=19)
          Point(X=43, Y=21)
          Point(X=44, Y=22)
          Point(X=44, Y=24)
          Point(X=45, Y=26)
        ArrayOfPoint
          Point(X=83, Y=40)
          Point(X=83, Y=42)
          Point(X=83, Y=44)
          Point(X=82, Y=46)
          Point(X=81, Y=47)
          Point(X=80, Y=49)
          Point(X=79, Y=50)
          Point(X=78, Y=50)
          Point(X=76, Y=51)
          Point(X=75, Y=51)
          Point(X=74, Y=51)
          Point(X=72, Y=50)
          Point(X=71, Y=50)
          Point(X=70, Y=49)
          Point(X=69, Y=47)
          Point(X=68, Y=46)
          Point(X=67, Y=44)
          Point(X=67, Y=42)
          Point(X=67, Y=40)
          Point(X=67, Y=39)
          Point(X=67, Y=37)
          Point(X=68, Y=35)
          Point(X=69, Y=34)
          Point(X=70, Y=32)
          Point(X=71, Y=31)
          Point(X=72, Y=31)
          Point(X=74, Y=30)
          Point(X=75, Y=30)
          Point(X=76, Y=30)
          Point(X=78, Y=31)
          Point(X=79, Y=31)
          Point(X=80, Y=32)
          Point(X=81, Y=34)
          Point(X=82, Y=35)
          Point(X=83, Y=37)
          Point(X=83, Y=39)
        ArrayOfPoint(Point(X=0, Y=2), Point(X=15, Y=2), Point(X=15, Y=47), Point(X=0, Y=47))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0) => #49
    #47 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0) => #51
    #47 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #53
    #47 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #55
    #47 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #57
    #46, #49, #51, #53, #55, #57 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\Stim_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #44 -> Bonsai.Dsp.MatrixWriter(Path=C:\FiberPhotmetry\output_temp\Raw_Stim_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow "Cameras + Pupil Tracking"
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022720, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=198, Y=140, Width=116, Height=117))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis => #6
    -> Bonsai.Vision.LargestBinaryRegion
    #6 -> Bonsai.Vision.MinimumEnclosingCircle
    -> OrderByDescending(KeySelector=Radius)
    -> SelectMany
        WorkflowInput Source1
        -> Merge
        -> FirstOrDefault
        -> WorkflowOutput
    -> MemberSelector(Selector=Radius)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\PupilTracking_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #1 -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\FaceEyeCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23045802, ColorProcessing=Default)
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\BodyCamera.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=120
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\BodyCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="")
    -> Bonsai.Vision.VideoWriter
      FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\FiberPhotmetry\output_temp\LickPortCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

Defer "ITI(Exp+Const)"
    SubscribeSubject ExpDist
    -> Bonsai.Numerics.Distributions.Sample => #1
    ExternalizedMapping(Value(DisplayName=Additional)) => #2
    #1, #2 -> Add(Operand=DoubleProperty(Value=5)) => #3
    -> Bonsai.Scripting.Expressions.ExpressionTransform Convert2Sec
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT6.747S, Period=PT0S)
    -> WorkflowOutput
    #3 -> MulticastSubject ITI
-> SelectMany TrialN+1
    SubscribeSubject TrialN
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialN
    -> WorkflowOutput
-> SelectMany TaskLogic
    SubscribeSubject Dist
    -> Bonsai.Numerics.Distributions.Sample => #1
    -> Bonsai.Scripting.Expressions.ExpressionCondition "1 Reward" => #2
      Expression: it = 1
    Source4=#2 -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward => #7
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "2-10 NoReward"
      Expression: it >= 2 && it <=10
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS1
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward => #13
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "11-15 Reward"
      Expression: it >= 11 && it <=15
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward => #19
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "16-20 No Reward"
      Expression: it >= 16 && it <=20
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS2
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward => #25
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "21-29 Reward"
      Expression: it >= 21 && it <=29
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject GiveReward => #31
    #1 -> Bonsai.Scripting.Expressions.ExpressionCondition "30 No Reward"
      Expression: it =30
    -> BooleanProperty(Value=true)
    -> MulticastSubject PlayCS3
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject GiveReward => #37
    #7, #13, #19, #25, #31, #37 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
    #1 -> MulticastSubject TrialType
-> RepeatCount(Count=600) => #10
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Alt", SuppressRepetitions=false)
-> BooleanProperty(Value=true) => #12
#10, #12 -> TakeUntil
-> DelaySubscription(DueTime=PT2H5M)
