<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindPavlovianConditioningDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p4="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindPavlovianConitioningTaskLogic.json</TaskLogicPath>
        <RigPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindPavlovianConditioningRig.json</RigPath>
        <SessionPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPavlovianConditioningRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPavlovianConitioningTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateRepository">
                <p3:Path>../.</p3:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" Selector="RootPath" />
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder>C:/Users/neurogears/source/repos/AllenNeuralDynamics/PavlovianCond_Bonsai/temp_data</RootFolder>
              <SessionName>test_2025-11-16T015422Z</SessionName>
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Hardware</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="GroupWorkflow">
                <Name>HarpDevices</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>RigSchema</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>HarpBehavior.PortName</Selector>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="PortName" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai">
                      <PortName>COM4</PortName>
                      <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>RigSchema</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>HarpSoundCard.PortName</Selector>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="PortName" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>HarpSoundCard</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                            <rx:Name>HarpSoundCardCommands</rx:Name>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="PortName" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="p4:Device">
                              <harp:OperationMode>Active</harp:OperationMode>
                              <harp:OperationLed>On</harp:OperationLed>
                              <harp:DumpRegisters>true</harp:DumpRegisters>
                              <harp:VisualIndicators>On</harp:VisualIndicators>
                              <harp:Heartbeat>Disabled</harp:Heartbeat>
                              <harp:IgnoreErrors>false</harp:IgnoreErrors>
                              <harp:PortName>COM8</harp:PortName>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="rx:PublishSubject">
                            <Name>HarpSoundCardEvents</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>TriggerHarpReadDump</Name>
                          </Expression>
                          <Expression xsi:type="harp:CreateMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                              <harp:OperationMode>Active</harp:OperationMode>
                              <harp:DumpRegisters>true</harp:DumpRegisters>
                              <harp:MuteReplies>false</harp:MuteReplies>
                              <harp:VisualIndicators>On</harp:VisualIndicators>
                              <harp:OperationLed>On</harp:OperationLed>
                              <harp:Heartbeat>Enabled</harp:Heartbeat>
                            </harp:Payload>
                          </Expression>
                          <Expression xsi:type="MulticastSubject">
                            <Name>HarpSoundCardCommands</Name>
                          </Expression>
                          <Expression xsi:type="p4:CreateMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Payload xsi:type="p4:CreateStopPayload">
                              <p4:Stop>0</p4:Stop>
                            </harp:Payload>
                          </Expression>
                          <Expression xsi:type="MulticastSubject">
                            <Name>HarpSoundCardCommands</Name>
                          </Expression>
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="2" Label="Source1" />
                          <Edge From="1" To="2" Label="Source2" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="9" To="10" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:SoundStimulus">
                      <rx:Name>PlaySound</rx:Name>
                    </Expression>
                    <Expression xsi:type="InputMapping">
                      <PropertyMappings>
                        <Property Name="AttenuationLeft" Selector="Attenuation" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="p4:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="p4:CreateAttenuationLeftPayload">
                        <p4:AttenuationLeft>200</p4:AttenuationLeft>
                      </harp:Payload>
                    </Expression>
                    <Expression xsi:type="InputMapping">
                      <PropertyMappings>
                        <Property Name="PlaySoundOrFrequency" Selector="Index" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="p4:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="p4:CreatePlaySoundOrFrequencyPayload">
                        <p4:PlaySoundOrFrequency>11</p4:PlaySoundOrFrequency>
                      </harp:Payload>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>HarpSoundCardCommands</Name>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
                      <rx:Name>RewardPulse</rx:Name>
                    </Expression>
                    <Expression xsi:type="InputMapping">
                      <PropertyMappings>
                        <Property Name="PulseSupplyPort0" Selector="it" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="beh:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="beh:CreatePulseSupplyPort0Payload">
                        <beh:PulseSupplyPort0>24</beh:PulseSupplyPort0>
                      </harp:Payload>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>HarpBehaviorCommands</Name>
                    </Expression>
                    <Expression xsi:type="beh:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                        <beh:OutputSet>SupplyPort0</beh:OutputSet>
                      </harp:Payload>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>HarpBehaviorCommands</Name>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="8" To="11" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="13" Label="Source1" />
                    <Edge From="11" To="12" Label="Source1" />
                    <Edge From="12" To="13" Label="Source2" />
                    <Edge From="13" To="14" Label="Source1" />
                    <Edge From="15" To="16" Label="Source1" />
                    <Edge From="16" To="17" Label="Source1" />
                    <Edge From="17" To="18" Label="Source1" />
                    <Edge From="18" To="19" Label="Source1" />
                    <Edge From="19" To="20" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
            </Nodes>
            <Edges />
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DebugHardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:SoundStimulus">
              <rx:Name>PlaySound</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>RewardPulse</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpBehaviorEvents</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpSoundCardEvents</rx:Name>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>HardwareChecks</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>RepositoryValidation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repository</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:IsRepositoryClean">
                      <p3:IgnoreUntracked>false</p3:IgnoreUntracked>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubjectSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AllowDirtyRepo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>AllowDirty?</scr:Name>
                    <scr:Expression>Item2 ? False : Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:ThrowException">
                      <p5:Message>Repository is not clean! Please discard all local changes.</p5:Message>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SkipHardwareValidation</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters.Environment.Blocks</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DoBlock</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>DoTrial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>InterTrialInterval</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>InterTrialInterval</Selector>
                              </Expression>
                              <Expression xsi:type="p1:MatchDistribution">
                                <p1:Type xsi:type="TypeMapping" TypeArguments="p1:ExponentialDistribution" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:SampleDistribution" />
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Duration</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Duration</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TaskParameters.MinIti</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Add" />
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Timer">
                                  <rx:DueTime>PT5.865S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Block</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="5" To="8" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="14" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>Stimulus</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RewardSelection</Selector>
                              </Expression>
                              <Expression xsi:type="p1:MatchDistribution">
                                <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UniformDistribution" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:SampleDistribution" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardSelection</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardSelection</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Block</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RewardProbabilityP</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>Rewarded</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="LessThanOrEqual" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>Unrewarded</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="GreaterThan" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Rewarded</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Rewarded</Name>
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>PlayStimulus</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>TaskLogicSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>TaskParameters.Cs</Selector>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>PlaySound</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TaskParameters.RewardDelay</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT0.1S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>RewardLogic</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Rewarded</Name>
                                    </Expression>
                                    <Expression xsi:type="rx:Condition">
                                      <Name>Rewarded</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>TaskLogicSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>TaskParameters.RewardSize</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>RewardPulse</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="BooleanProperty">
                                        <Value>true</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:Condition">
                                      <Name>Unrewarded</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="BitwiseNot" />
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Merge" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="1" To="9" Label="Source1" />
                                    <Edge From="2" To="5" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="10" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source2" />
                                    <Edge From="10" To="11" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="6" To="9" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="9" To="12" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="14" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="23" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source2" />
                              <Edge From="23" To="24" Label="Source1" />
                              <Edge From="24" To="25" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="p1:MatchDistribution">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:ExponentialDistribution" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:SampleDistribution" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Ceiling" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>9</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="11" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Defer">
          <Name>Logging</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>HarpBehaviorEvents</Name>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                <DeviceMetadata>%YAML 1.1
---
# yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
device: Behavior
whoAmI: 1216
firmwareVersion: "3.3"
hardwareTargets: "1.1"
registers:
  DigitalInputState:
    address: 32
    access: Event
    type: U8
    maskType: DigitalInputs
    description: Reflects the state of DI digital lines of each Port
  Reserved0: &amp;reserved
    address: 33
    type: U8
    access: Read
    description: Reserved for future use
    visibility: private
  OutputSet: &amp;output
    address: 34
    type: U16
    access: Write
    maskType: DigitalOutputs
    description: Set the specified digital output lines.
  OutputClear:
    &lt;&lt;: *output
    address: 35
    description: Clear the specified digital output lines
  OutputToggle:
    &lt;&lt;: *output
    address: 36
    description: Toggle the specified digital output lines
  OutputState:
    &lt;&lt;: *output
    address: 37
    description: Write the state of all digital output lines
  PortDIOSet: &amp;portDIO
    address: 38
    type: U8
    access: Write
    maskType: PortDigitalIOS
    description: Set the specified port DIO lines
  PortDIOClear:
    &lt;&lt;: *portDIO
    address: 39
    description: Clear the specified port DIO lines
  PortDIOToggle:
    &lt;&lt;: *portDIO
    address: 40
    description: Toggle the specified port DIO lines
  PortDIOState:
    &lt;&lt;: *portDIO
    address: 41
    description: Write the state of all port DIO lines
  PortDIODirection:
    &lt;&lt;: *portDIO
    address: 42
    description: Specifies which of the port DIO lines are outputs
  PortDIOStateEvent:
    &lt;&lt;: *portDIO
    address: 43
    access: Event
    description: Specifies the state of the port DIO lines on a line change
  AnalogData:
    address: 44
    type: S16
    length: 3
    access: Event
    description: Voltage at the ADC input and encoder value on Port 2
    payloadSpec:
      AnalogInput0:
        offset: 0
        description: The voltage at the output of the ADC channel 0.
      Encoder:
        offset: 1
        description: The quadrature counter value on Port 2
      AnalogInput1:
        offset: 2
        description: The voltage at the output of the ADC channel 1.
  OutputPulseEnable:
    &lt;&lt;: *output
    address: 45
    description: Enables the pulse function for the specified output lines
  PulseDOPort0: &amp;pulseDO
    address: 46
    type: U16
    access: Write
    minValue: 1
    description: Specifies the duration of the output pulse in milliseconds.
  PulseDOPort1:
    &lt;&lt;: *pulseDO
    address: 47
  PulseDOPort2:
    &lt;&lt;: *pulseDO
    address: 48
  PulseSupplyPort0:
    &lt;&lt;: *pulseDO
    address: 49
  PulseSupplyPort1:
    &lt;&lt;: *pulseDO
    address: 50
  PulseSupplyPort2:
    &lt;&lt;: *pulseDO
    address: 51
  PulseLed0:
    &lt;&lt;: *pulseDO
    address: 52
  PulseLed1:
    &lt;&lt;: *pulseDO
    address: 53
  PulseRgb0:
    &lt;&lt;: *pulseDO
    address: 54
  PulseRgb1:
    &lt;&lt;: *pulseDO
    address: 55
  PulseDO0:
    &lt;&lt;: *pulseDO
    address: 56
  PulseDO1:
    &lt;&lt;: *pulseDO
    address: 57
  PulseDO2:
    &lt;&lt;: *pulseDO
    address: 58
  PulseDO3:
    &lt;&lt;: *pulseDO
    address: 59
  PwmFrequencyDO0: &amp;pwmFreq
    address: 60
    type: U16
    access: Write
    minValue: 1
    description: Specifies the frequency of the PWM at DO0.
  PwmFrequencyDO1:
    &lt;&lt;: *pwmFreq
    address: 61
    description: Specifies the frequency of the PWM at DO1.
  PwmFrequencyDO2:
    &lt;&lt;: *pwmFreq
    address: 62
    description: Specifies the frequency of the PWM at DO2.
  PwmFrequencyDO3:
    &lt;&lt;: *pwmFreq
    address: 63
    description: Specifies the frequency of the PWM at DO3.
  PwmDutyCycleDO0: &amp;pwmDutyCycle
    address: 64
    type: U8
    access: Write
    minValue: 1
    maxValue: 99
    description: Specifies the duty cycle of the PWM at DO0.
  PwmDutyCycleDO1:
    &lt;&lt;: *pwmDutyCycle
    address: 65
    description: Specifies the duty cycle of the PWM at DO1.
  PwmDutyCycleDO2:
    &lt;&lt;: *pwmDutyCycle
    address: 66
    description: Specifies the duty cycle of the PWM at DO2.
  PwmDutyCycleDO3:
    &lt;&lt;: *pwmDutyCycle
    address: 67
    description: Specifies the duty cycle of the PWM at DO3.
  PwmStart: &amp;pwmStartStop
    address: 68
    type: U8
    access: Write
    maskType: PwmOutputs
    description: Starts the PWM on the selected output lines.
  PwmStop:
    &lt;&lt;: *pwmStartStop
    address: 69
    description: Stops the PWM on the selected output lines.
  RgbAll:
    address: 70
    type: &amp;rgbType U8
    length: 6
    access: &amp;rgbAccess Write
    description: Specifies the state of all RGB LED channels.
    payloadSpec:
      Green0:
        offset: 0
        description: The intensity of the green channel in the RGB0 LED.
      Red0:
        offset: 1
        description: The intensity of the red channel in the RGB0 LED.
      Blue0:
        offset: 2
        description: The intensity of the blue channel in the RGB0 LED.
      Green1:
        offset: 3
        description: The intensity of the green channel in the RGB1 LED.
      Red1:
        offset: 4
        description: The intensity of the red channel in the RGB1 LED.
      Blue1:
        offset: 5
        description: The intensity of the blue channel in the RGB1 LED.
  Rgb0: &amp;rgbRegister
    address: 71
    type: *rgbType
    length: 3
    access: *rgbAccess
    description: Specifies the state of the RGB0 LED channels.
    interfaceType: RgbPayload
    payloadSpec:
      Green:
        offset: 0
        description: The intensity of the green channel in the RGB LED.
      Red:
        offset: 1
        description: The intensity of the red channel in the RGB LED.
      Blue:
        offset: 2
        description: The intensity of the blue channel in the RGB LED.
  Rgb1:
    &lt;&lt;: *rgbRegister
    address: 72
    description: Specifies the state of the RGB1 LED channels.
  Led0Current: &amp;ledCurrent
    address: 73
    type: U8
    access: Write
    minValue: 2
    maxValue: 100
    description: Specifies the configuration of current to drive LED 0.
  Led1Current:
    &lt;&lt;: *ledCurrent
    address: 74
    description: Specifies the configuration of current to drive LED 1.
  Led0MaxCurrent: &amp;ledMaxCurrent
    address: 75
    type: U8
    access: Write
    minValue: 5
    maxValue: 100
    description: Specifies the configuration of current to drive LED 0.
  Led1MaxCurrent:
    &lt;&lt;: *ledMaxCurrent
    address: 76
    description: Specifies the configuration of current to drive LED 1.
  EventEnable:
    address: 77
    type: U8
    access: Write
    maskType: Events
    description: Specifies the active events in the device.
  StartCameras: &amp;cameraControl
    address: 78
    type: U8
    access: Write
    maskType: CameraOutputs
    description: Specifies the camera outputs to enable in the device.
  StopCameras:
    &lt;&lt;: *cameraControl
    access: [Write, Event]
    address: 79
    description: Specifies the camera outputs to disable in the device. An event will be issued when the trigger signal is actually stopped being generated.
  EnableServos: &amp;servoControl
    address: 80
    type: U8
    access: Write
    maskType: ServoOutputs
    description: Specifies the servo outputs to enable in the device.
  DisableServos:
    &lt;&lt;: *servoControl
    address: 81
    description: Specifies the servo outputs to disable in the device.
  EnableEncoders:
    address: 82
    type: U8
    access: Write
    maskType: EncoderInputs
    description: Specifies the port quadrature counters to enable in the device.
  EncoderMode:
    address: 83
    type: U8
    access: Write
    maskType: EncoderModeConfig
    description: Configures the operation mode of the quadrature encoders.
  Reserved2:
    &lt;&lt;: *reserved
    address: 84
  Reserved3:
    &lt;&lt;: *reserved
    address: 85
  Reserved4:
    &lt;&lt;: *reserved
    address: 86
  Reserved5:
    &lt;&lt;: *reserved
    address: 87
  Reserved6:
    &lt;&lt;: *reserved
    address: 88
  Reserved7:
    &lt;&lt;: *reserved
    address: 89
  Reserved8:
    &lt;&lt;: *reserved
    address: 90
  Reserved9:
    &lt;&lt;: *reserved
    address: 91
  Camera0Frame: &amp;frameAcquired
    address: 92
    type: U8
    access: Event
    maskType: FrameAcquired
    description: Specifies that a frame was acquired on camera 0.
  Camera0Frequency: &amp;cameraFreq
    address: 93
    type: U16
    access: Write
    minValue: 1
    maxValue: 600
    description: Specifies the trigger frequency for camera 0.
  Camera1Frame:
    &lt;&lt;: *frameAcquired
    address: 94
    description: Specifies that a frame was acquired on camera 1.
  Camera1Frequency:
    &lt;&lt;: *cameraFreq
    address: 95
    description: Specifies the trigger frequency for camera 1.
  Reserved10:
    &lt;&lt;: *reserved
    address: 96
  Reserved11:
    &lt;&lt;: *reserved
    address: 97
  Reserved12:
    &lt;&lt;: *reserved
    address: 98
  Reserved13:
    &lt;&lt;: *reserved
    address: 99
  ServoMotor2Period: &amp;servoPeriod
    address: 100
    type: U16
    access: Write
    minValue: 2
    maxValue: 65534
    description: Specifies the period of the servo motor in DO2, in microseconds.
  ServoMotor2Pulse: &amp;servoPulse
    address: 101
    type: U16
    access: Write
    minValue: 6
    maxValue: 65530
    description: Specifies the pulse of the servo motor in DO2, in microseconds.
  ServoMotor3Period:
    &lt;&lt;: *servoPeriod
    address: 102
    description: Specifies the period of the servo motor in DO3, in microseconds.
  ServoMotor3Pulse:
    &lt;&lt;: *servoPulse
    address: 103
    description: Specifies the pulse of the servo motor in DO3, in microseconds.
  Reserved14:
    &lt;&lt;: *reserved
    address: 104
  Reserved15:
    &lt;&lt;: *reserved
    address: 105
  Reserved16:
    &lt;&lt;: *reserved
    address: 106
  Reserved17:
    &lt;&lt;: *reserved
    address: 107
  EncoderReset:
    address: 108
    type: U8
    access: Write
    maskType: EncoderInputs
    description: Reset the counter of the specified encoders to zero.
  Reserved18:
    &lt;&lt;: *reserved
    address: 109
  EnableSerialTimestamp:
    address: 110
    type: U8
    access: Write
    description: Enables the timestamp for serial TX.
  MimicPort0IR: &amp;mimic
    address: 111
    type: U8
    access: Write
    maskType: MimicOutput
    description: Specifies the digital output to mimic the Port 0 IR state.
  MimicPort1IR:
    &lt;&lt;: *mimic
    address: 112
    description: Specifies the digital output to mimic the Port 1 IR state.
  MimicPort2IR:
    &lt;&lt;: *mimic
    address: 113
    description: Specifies the digital output to mimic the Port 2 IR state.
  Reserved20:
    &lt;&lt;: *reserved
    address: 114
  Reserved21:
    &lt;&lt;: *reserved
    address: 115
  Reserved22:
    &lt;&lt;: *reserved
    address: 116
  MimicPort0Valve:
    &lt;&lt;: *mimic
    address: 117
    description: Specifies the digital output to mimic the Port 0 valve state.
  MimicPort1Valve:
    &lt;&lt;: *mimic
    address: 118
    description: Specifies the digital output to mimic the Port 1 valve state.
  MimicPort2Valve:
    &lt;&lt;: *mimic
    address: 119
    description: Specifies the digital output to mimic the Port 2 valve state.
  Reserved23:
    &lt;&lt;: *reserved
    address: 120
  Reserved24:
    &lt;&lt;: *reserved
    address: 121
  PokeInputFilter:
    address: 122
    type: U8
    access: Write
    description: Specifies the low pass filter time value for poke inputs, in ms.
bitMasks:
  DigitalInputs:
    description: Specifies the state of port digital input lines.
    bits:
      DIPort0: 0x1
      DIPort1: 0x2
      DIPort2: 0x4
      DI3: 0x8
  DigitalOutputs:
    description: Specifies the state of port digital output lines.
    bits:
      DOPort0: 0x1
      DOPort1: 0x2
      DOPort2: 0x4
      SupplyPort0: 0x8
      SupplyPort1: 0x10
      SupplyPort2: 0x20
      Led0: 0x40
      Led1: 0x80
      Rgb0: 0x100
      Rgb1: 0x200
      DO0: 0x400
      DO1: 0x800
      DO2: 0x1000
      DO3: 0x2000
  PortDigitalIOS:
    description: Specifies the state of the port DIO lines.
    bits:
      DIO0: 0x1
      DIO1: 0x2
      DIO2: 0x4
  PwmOutputs:
    description: Specifies the state of PWM output lines.
    bits:
      PwmDO0: 0x1
      PwmDO1: 0x2
      PwmDO2: 0x4
      PwmDO3: 0x8
  Events:
    description: Specifies the active events in the device.
    bits:
      PortDI: 0x1
      PortDIO: 0x2
      AnalogData: 0x4
      Camera0: 0x8
      Camera1: 0x10
  CameraOutputs:
    description: Specifies camera output enable bits.
    bits:
      CameraOutput0: 0x1
      CameraOutput1: 0x2
  ServoOutputs:
    description: Specifies servo output enable bits.
    bits:
      ServoOutput2: 0x4
      ServoOutput3: 0x8
  EncoderInputs:
    description: Specifies quadrature counter enable bits.
    bits:
      EncoderPort2: 0x4
  FrameAcquired:
    description: Specifies that camera frame was acquired.
    bits:
      FrameAcquired: 0x1
groupMasks:
  MimicOutput:
    description: Specifies the target IO on which to mimic the specified register.
    values:
      None: 0
      DIO0: 1
      DIO1: 2
      DIO2: 3
      DO0: 4
      DO1: 5
      DO2: 6
      DO3: 7
  EncoderModeConfig:
    description: Specifies the type of reading made from the quadrature encoder.
    values:
      Position: 0
      Displacement: 1</DeviceMetadata>
                <Modality>Behavior</Modality>
                <DeviceName>Behavior</DeviceName>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>HarpSoundCardEvents</Name>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                <DeviceMetadata>%YAML 1.1
---
# yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
device: Behavior
whoAmI: 1216
firmwareVersion: "3.3"
hardwareTargets: "1.1"
registers:
  DigitalInputState:
    address: 32
    access: Event
    type: U8
    maskType: DigitalInputs
    description: Reflects the state of DI digital lines of each Port
  Reserved0: &amp;reserved
    address: 33
    type: U8
    access: Read
    description: Reserved for future use
    visibility: private
  OutputSet: &amp;output
    address: 34
    type: U16
    access: Write
    maskType: DigitalOutputs
    description: Set the specified digital output lines.
  OutputClear:
    &lt;&lt;: *output
    address: 35
    description: Clear the specified digital output lines
  OutputToggle:
    &lt;&lt;: *output
    address: 36
    description: Toggle the specified digital output lines
  OutputState:
    &lt;&lt;: *output
    address: 37
    description: Write the state of all digital output lines
  PortDIOSet: &amp;portDIO
    address: 38
    type: U8
    access: Write
    maskType: PortDigitalIOS
    description: Set the specified port DIO lines
  PortDIOClear:
    &lt;&lt;: *portDIO
    address: 39
    description: Clear the specified port DIO lines
  PortDIOToggle:
    &lt;&lt;: *portDIO
    address: 40
    description: Toggle the specified port DIO lines
  PortDIOState:
    &lt;&lt;: *portDIO
    address: 41
    description: Write the state of all port DIO lines
  PortDIODirection:
    &lt;&lt;: *portDIO
    address: 42
    description: Specifies which of the port DIO lines are outputs
  PortDIOStateEvent:
    &lt;&lt;: *portDIO
    address: 43
    access: Event
    description: Specifies the state of the port DIO lines on a line change
  AnalogData:
    address: 44
    type: S16
    length: 3
    access: Event
    description: Voltage at the ADC input and encoder value on Port 2
    payloadSpec:
      AnalogInput0:
        offset: 0
        description: The voltage at the output of the ADC channel 0.
      Encoder:
        offset: 1
        description: The quadrature counter value on Port 2
      AnalogInput1:
        offset: 2
        description: The voltage at the output of the ADC channel 1.
  OutputPulseEnable:
    &lt;&lt;: *output
    address: 45
    description: Enables the pulse function for the specified output lines
  PulseDOPort0: &amp;pulseDO
    address: 46
    type: U16
    access: Write
    minValue: 1
    description: Specifies the duration of the output pulse in milliseconds.
  PulseDOPort1:
    &lt;&lt;: *pulseDO
    address: 47
  PulseDOPort2:
    &lt;&lt;: *pulseDO
    address: 48
  PulseSupplyPort0:
    &lt;&lt;: *pulseDO
    address: 49
  PulseSupplyPort1:
    &lt;&lt;: *pulseDO
    address: 50
  PulseSupplyPort2:
    &lt;&lt;: *pulseDO
    address: 51
  PulseLed0:
    &lt;&lt;: *pulseDO
    address: 52
  PulseLed1:
    &lt;&lt;: *pulseDO
    address: 53
  PulseRgb0:
    &lt;&lt;: *pulseDO
    address: 54
  PulseRgb1:
    &lt;&lt;: *pulseDO
    address: 55
  PulseDO0:
    &lt;&lt;: *pulseDO
    address: 56
  PulseDO1:
    &lt;&lt;: *pulseDO
    address: 57
  PulseDO2:
    &lt;&lt;: *pulseDO
    address: 58
  PulseDO3:
    &lt;&lt;: *pulseDO
    address: 59
  PwmFrequencyDO0: &amp;pwmFreq
    address: 60
    type: U16
    access: Write
    minValue: 1
    description: Specifies the frequency of the PWM at DO0.
  PwmFrequencyDO1:
    &lt;&lt;: *pwmFreq
    address: 61
    description: Specifies the frequency of the PWM at DO1.
  PwmFrequencyDO2:
    &lt;&lt;: *pwmFreq
    address: 62
    description: Specifies the frequency of the PWM at DO2.
  PwmFrequencyDO3:
    &lt;&lt;: *pwmFreq
    address: 63
    description: Specifies the frequency of the PWM at DO3.
  PwmDutyCycleDO0: &amp;pwmDutyCycle
    address: 64
    type: U8
    access: Write
    minValue: 1
    maxValue: 99
    description: Specifies the duty cycle of the PWM at DO0.
  PwmDutyCycleDO1:
    &lt;&lt;: *pwmDutyCycle
    address: 65
    description: Specifies the duty cycle of the PWM at DO1.
  PwmDutyCycleDO2:
    &lt;&lt;: *pwmDutyCycle
    address: 66
    description: Specifies the duty cycle of the PWM at DO2.
  PwmDutyCycleDO3:
    &lt;&lt;: *pwmDutyCycle
    address: 67
    description: Specifies the duty cycle of the PWM at DO3.
  PwmStart: &amp;pwmStartStop
    address: 68
    type: U8
    access: Write
    maskType: PwmOutputs
    description: Starts the PWM on the selected output lines.
  PwmStop:
    &lt;&lt;: *pwmStartStop
    address: 69
    description: Stops the PWM on the selected output lines.
  RgbAll:
    address: 70
    type: &amp;rgbType U8
    length: 6
    access: &amp;rgbAccess Write
    description: Specifies the state of all RGB LED channels.
    payloadSpec:
      Green0:
        offset: 0
        description: The intensity of the green channel in the RGB0 LED.
      Red0:
        offset: 1
        description: The intensity of the red channel in the RGB0 LED.
      Blue0:
        offset: 2
        description: The intensity of the blue channel in the RGB0 LED.
      Green1:
        offset: 3
        description: The intensity of the green channel in the RGB1 LED.
      Red1:
        offset: 4
        description: The intensity of the red channel in the RGB1 LED.
      Blue1:
        offset: 5
        description: The intensity of the blue channel in the RGB1 LED.
  Rgb0: &amp;rgbRegister
    address: 71
    type: *rgbType
    length: 3
    access: *rgbAccess
    description: Specifies the state of the RGB0 LED channels.
    interfaceType: RgbPayload
    payloadSpec:
      Green:
        offset: 0
        description: The intensity of the green channel in the RGB LED.
      Red:
        offset: 1
        description: The intensity of the red channel in the RGB LED.
      Blue:
        offset: 2
        description: The intensity of the blue channel in the RGB LED.
  Rgb1:
    &lt;&lt;: *rgbRegister
    address: 72
    description: Specifies the state of the RGB1 LED channels.
  Led0Current: &amp;ledCurrent
    address: 73
    type: U8
    access: Write
    minValue: 2
    maxValue: 100
    description: Specifies the configuration of current to drive LED 0.
  Led1Current:
    &lt;&lt;: *ledCurrent
    address: 74
    description: Specifies the configuration of current to drive LED 1.
  Led0MaxCurrent: &amp;ledMaxCurrent
    address: 75
    type: U8
    access: Write
    minValue: 5
    maxValue: 100
    description: Specifies the configuration of current to drive LED 0.
  Led1MaxCurrent:
    &lt;&lt;: *ledMaxCurrent
    address: 76
    description: Specifies the configuration of current to drive LED 1.
  EventEnable:
    address: 77
    type: U8
    access: Write
    maskType: Events
    description: Specifies the active events in the device.
  StartCameras: &amp;cameraControl
    address: 78
    type: U8
    access: Write
    maskType: CameraOutputs
    description: Specifies the camera outputs to enable in the device.
  StopCameras:
    &lt;&lt;: *cameraControl
    access: [Write, Event]
    address: 79
    description: Specifies the camera outputs to disable in the device. An event will be issued when the trigger signal is actually stopped being generated.
  EnableServos: &amp;servoControl
    address: 80
    type: U8
    access: Write
    maskType: ServoOutputs
    description: Specifies the servo outputs to enable in the device.
  DisableServos:
    &lt;&lt;: *servoControl
    address: 81
    description: Specifies the servo outputs to disable in the device.
  EnableEncoders:
    address: 82
    type: U8
    access: Write
    maskType: EncoderInputs
    description: Specifies the port quadrature counters to enable in the device.
  EncoderMode:
    address: 83
    type: U8
    access: Write
    maskType: EncoderModeConfig
    description: Configures the operation mode of the quadrature encoders.
  Reserved2:
    &lt;&lt;: *reserved
    address: 84
  Reserved3:
    &lt;&lt;: *reserved
    address: 85
  Reserved4:
    &lt;&lt;: *reserved
    address: 86
  Reserved5:
    &lt;&lt;: *reserved
    address: 87
  Reserved6:
    &lt;&lt;: *reserved
    address: 88
  Reserved7:
    &lt;&lt;: *reserved
    address: 89
  Reserved8:
    &lt;&lt;: *reserved
    address: 90
  Reserved9:
    &lt;&lt;: *reserved
    address: 91
  Camera0Frame: &amp;frameAcquired
    address: 92
    type: U8
    access: Event
    maskType: FrameAcquired
    description: Specifies that a frame was acquired on camera 0.
  Camera0Frequency: &amp;cameraFreq
    address: 93
    type: U16
    access: Write
    minValue: 1
    maxValue: 600
    description: Specifies the trigger frequency for camera 0.
  Camera1Frame:
    &lt;&lt;: *frameAcquired
    address: 94
    description: Specifies that a frame was acquired on camera 1.
  Camera1Frequency:
    &lt;&lt;: *cameraFreq
    address: 95
    description: Specifies the trigger frequency for camera 1.
  Reserved10:
    &lt;&lt;: *reserved
    address: 96
  Reserved11:
    &lt;&lt;: *reserved
    address: 97
  Reserved12:
    &lt;&lt;: *reserved
    address: 98
  Reserved13:
    &lt;&lt;: *reserved
    address: 99
  ServoMotor2Period: &amp;servoPeriod
    address: 100
    type: U16
    access: Write
    minValue: 2
    maxValue: 65534
    description: Specifies the period of the servo motor in DO2, in microseconds.
  ServoMotor2Pulse: &amp;servoPulse
    address: 101
    type: U16
    access: Write
    minValue: 6
    maxValue: 65530
    description: Specifies the pulse of the servo motor in DO2, in microseconds.
  ServoMotor3Period:
    &lt;&lt;: *servoPeriod
    address: 102
    description: Specifies the period of the servo motor in DO3, in microseconds.
  ServoMotor3Pulse:
    &lt;&lt;: *servoPulse
    address: 103
    description: Specifies the pulse of the servo motor in DO3, in microseconds.
  Reserved14:
    &lt;&lt;: *reserved
    address: 104
  Reserved15:
    &lt;&lt;: *reserved
    address: 105
  Reserved16:
    &lt;&lt;: *reserved
    address: 106
  Reserved17:
    &lt;&lt;: *reserved
    address: 107
  EncoderReset:
    address: 108
    type: U8
    access: Write
    maskType: EncoderInputs
    description: Reset the counter of the specified encoders to zero.
  Reserved18:
    &lt;&lt;: *reserved
    address: 109
  EnableSerialTimestamp:
    address: 110
    type: U8
    access: Write
    description: Enables the timestamp for serial TX.
  MimicPort0IR: &amp;mimic
    address: 111
    type: U8
    access: Write
    maskType: MimicOutput
    description: Specifies the digital output to mimic the Port 0 IR state.
  MimicPort1IR:
    &lt;&lt;: *mimic
    address: 112
    description: Specifies the digital output to mimic the Port 1 IR state.
  MimicPort2IR:
    &lt;&lt;: *mimic
    address: 113
    description: Specifies the digital output to mimic the Port 2 IR state.
  Reserved20:
    &lt;&lt;: *reserved
    address: 114
  Reserved21:
    &lt;&lt;: *reserved
    address: 115
  Reserved22:
    &lt;&lt;: *reserved
    address: 116
  MimicPort0Valve:
    &lt;&lt;: *mimic
    address: 117
    description: Specifies the digital output to mimic the Port 0 valve state.
  MimicPort1Valve:
    &lt;&lt;: *mimic
    address: 118
    description: Specifies the digital output to mimic the Port 1 valve state.
  MimicPort2Valve:
    &lt;&lt;: *mimic
    address: 119
    description: Specifies the digital output to mimic the Port 2 valve state.
  Reserved23:
    &lt;&lt;: *reserved
    address: 120
  Reserved24:
    &lt;&lt;: *reserved
    address: 121
  PokeInputFilter:
    address: 122
    type: U8
    access: Write
    description: Specifies the low pass filter time value for poke inputs, in ms.
bitMasks:
  DigitalInputs:
    description: Specifies the state of port digital input lines.
    bits:
      DIPort0: 0x1
      DIPort1: 0x2
      DIPort2: 0x4
      DI3: 0x8
  DigitalOutputs:
    description: Specifies the state of port digital output lines.
    bits:
      DOPort0: 0x1
      DOPort1: 0x2
      DOPort2: 0x4
      SupplyPort0: 0x8
      SupplyPort1: 0x10
      SupplyPort2: 0x20
      Led0: 0x40
      Led1: 0x80
      Rgb0: 0x100
      Rgb1: 0x200
      DO0: 0x400
      DO1: 0x800
      DO2: 0x1000
      DO3: 0x2000
  PortDigitalIOS:
    description: Specifies the state of the port DIO lines.
    bits:
      DIO0: 0x1
      DIO1: 0x2
      DIO2: 0x4
  PwmOutputs:
    description: Specifies the state of PWM output lines.
    bits:
      PwmDO0: 0x1
      PwmDO1: 0x2
      PwmDO2: 0x4
      PwmDO3: 0x8
  Events:
    description: Specifies the active events in the device.
    bits:
      PortDI: 0x1
      PortDIO: 0x2
      AnalogData: 0x4
      Camera0: 0x8
      Camera1: 0x10
  CameraOutputs:
    description: Specifies camera output enable bits.
    bits:
      CameraOutput0: 0x1
      CameraOutput1: 0x2
  ServoOutputs:
    description: Specifies servo output enable bits.
    bits:
      ServoOutput2: 0x4
      ServoOutput3: 0x8
  EncoderInputs:
    description: Specifies quadrature counter enable bits.
    bits:
      EncoderPort2: 0x4
  FrameAcquired:
    description: Specifies that camera frame was acquired.
    bits:
      FrameAcquired: 0x1
groupMasks:
  MimicOutput:
    description: Specifies the target IO on which to mimic the specified register.
    values:
      None: 0
      DIO0: 1
      DIO1: 2
      DIO2: 3
      DO0: 4
      DO1: 5
      DO2: 6
      DO3: 7
  EncoderModeConfig:
    description: Specifies the type of reading made from the quadrature encoder.
    values:
      Position: 0
      Displacement: 1</DeviceMetadata>
                <Modality>Behavior</Modality>
                <DeviceName>SoundCard</DeviceName>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>EndExperiment</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>StartLogging</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>